# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: BlueFors HeavyMetal AMI430 magnet SPIN FRIDGE 2 2D

# The version string should be updated whenever changes are made to this config file
version: 1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: AMI430_SPINFridge2

# I am not sure if this is the case, actually i am pretty sure its not bcs this is kind of a custom instrument
# that represents n different instruments as one isntrument.
# interface: TCPIP

startup: Do Nothing

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver

model_str_1: 430

# Check instrument model id at startup (True or False). Default is False
check_model: False

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: 430

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
# use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# Use the SYSTem:ERRor? query to retrieve the errors in first-in-first-out
# (FIFO) order. Errors are removed from the internal error buffer as they
# are read. The Model 430 Programmer can store up to 10 errors.
# The bits signal the following errors:
# 0: Operation complete with no errors
# 1: Not used (always 0)
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: Not used (always 0)
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: SYSTEM:ERROR?

# Use specific TCPIP socket port. Default if False
# tcpip_specify_port: True

# TCPIP socket port. Only relevant if tcpip_specify_port is True
# tcpip_port = 7180

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
# init:

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
#str_true:
#str_false:

# Final commands sent to the instrument when closing the driver
# final:

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
[x_pSwitch]
label: pSwitch [X]
datatype = BOOLEAN
def_value = False
get_cmd = PS?
set_cmd = PS <*>
section = X direction
group = X magnet
show_in_measurement_dlg = True

[y_pSwitch]
label: pSwitch [Y]
datatype = BOOLEAN
def_value = False
get_cmd = PS?
set_cmd = PS <*>
section = Y direction
group = Y magnet
show_in_measurement_dlg = True

[z_pSwitch]
label: pSwitch [Z]
datatype = BOOLEAN
def_value = False
get_cmd = PS?
set_cmd = PS <*>
section = Z direction
group = Z magnet
show_in_measurement_dlg = True

[x_current]
label: Current [X]
datatype = DOUBLE
unit: A
# Rated operating current (as specified in spec sheet): 52.88 A
# Rated operating current in A, from spec sheet. A margin of 0.03A is added so that the rated fields fit in.
# If the magnet quenches regularly, reduce these values!!!!
low_lim = -52.91
high_lim = 52.91
get_cmd = CURR:MAG?
set_cmd = CONF:CURR:TARG <*>
section = X direction
group = X magnet
show_in_measurement_dlg = True

[y_current]
label: Current [Y]
datatype = DOUBLE
unit: A
# Rated operating current (as specified in spec sheet): 53.02 A
# Rated operating current in A, from spec sheet. A margin of 0.03A is added so that the rated fields fit in.
# If the magnet quenches regularly, reduce these values!!!!
low_lim = -53.05
high_lim = 53.05
get_cmd = CURR:MAG?
set_cmd = CONF:CURR:TARG <*>
section = Y direction
group = Y magnet
show_in_measurement_dlg = True

[z_current]
label: Current [Z]
datatype = DOUBLE
unit: A
# Rated operating current (as specified in spec sheet): 55.00 A
# Rated operating current in A, from spec sheet. A margin of 0.03A is added so that the rated fields fit in.
# If the magnet quenches regularly, reduce these values!!!!
low_lim = -55.03
high_lim = 55.03
get_cmd = CURR:MAG?
set_cmd = CONF:CURR:TARG <*>
section = Z direction
group = Z magnet
show_in_measurement_dlg = True

[x_field]
label: Field [X]
datatype = DOUBLE
unit: T
# Field to Current Ratio (as specified in spec sheet): 0.01891 T/A
# Rated operating current (as specified in spec sheet): 52.88 A
# Field to Current Ratio multiplied by rated operating current: 52.88 A * 0.01891 T/A = 0.9999608 T
low_lim = -0.9999608
high_lim = 0.9999608
get_cmd = FIELD:MAG?
set_cmd = CONF:FIELD:TARG <*>
section = X direction
group = X magnet
show_in_measurement_dlg = True

[y_field]
label: Field [Y]
datatype = DOUBLE
unit: T
# Field to Current Ratio (as specified in spec sheet): 0.01886 T/A
# Rated operating current (as specified in spec sheet): 53.02 A
# Field to Current Ratio multiplied by rated operating current: 53.02 A * 0.01886 T/A = 0.9999572 T
low_lim = -0.9999572
high_lim = 0.9999572
get_cmd = FIELD:MAG?
set_cmd = CONF:FIELD:TARG <*>
section = Y direction
group = Y magnet
show_in_measurement_dlg = True

[z_field]
label: Field [Z]
datatype = DOUBLE
unit: T
# Field to Current Ratio (as specified in spec sheet): 0.1091 T/A
# Rated operating current (as specified in spec sheet): 55.00 A
# Field to Current Ratio multiplied by rated operating current: 55.00 A * 0.1091 T/A = 6.005 T
low_lim = -6.005
high_lim = 6.005
get_cmd = FIELD:MAG?
set_cmd = CONF:FIELD:TARG <*>
section = Z direction
group = Z magnet
show_in_measurement_dlg = True

[x_units]
label: Units [X]
datatype = COMBO
combo_def_1 = kG
combo_def_2 = T
get_cmd = FIELD:UNITS?
set_cmd = CONF:FIELD:UNITS <*>
section = X direction
group = X magnet
show_in_measurement_dlg = False

[y_units]
label: Units [Y]
datatype = COMBO
combo_def_1 = kG
combo_def_2 = T
get_cmd = FIELD:UNITS?
set_cmd = CONF:FIELD:UNITS <*>
section = Y direction
group = Y magnet
show_in_measurement_dlg = False

[z_units]
label: Units [Z]
datatype = COMBO
combo_def_1 = kG
combo_def_2 = T
get_cmd = FIELD:UNITS?
set_cmd = CONF:FIELD:UNITS <*>
section = Z direction
group = Z magnet
show_in_measurement_dlg = False

[x_setPoint]
label: Set point [X]
datatype = DOUBLE
unit: T
get_cmd = FIELD:TARG?
set_cmd = CONF:FIELD:TARG <*>
section = X direction
group = X magnet
show_in_measurement_dlg = True

[y_setPoint]
label: Set point [Y]
datatype = DOUBLE
unit: T
get_cmd = FIELD:TARG?
set_cmd = CONF:FIELD:TARG <*>
section = Y direction
group = Y magnet
show_in_measurement_dlg = True

[z_setPoint]
label: Set point [Z]
datatype = DOUBLE
unit: T
get_cmd = FIELD:TARG?
set_cmd = CONF:FIELD:TARG <*>
section = Z direction
group = Z magnet
show_in_measurement_dlg = True

[x_rampRate]
label: Ramp rate [X]
datatype = DOUBLE
unit: T/s
# Field to Current Ratio (as specified in spec sheet): 0.01864 T/A
# Ramp rate (as specified in spec sheet): 0.13 A/s
# ratio between current and magnetic field multiplied by maximum ramp limits from datasheet: 0.01864 * 0.13 = 0.0024232
low_lim = 0.0
high_lim = 0.0024232
get_cmd = RAMP:RATE:FIELD:1?
set_cmd = CONF:RAMP:RATE:FIELD 1, <*>, 0.0024
section = X direction
group = X magnet
show_in_measurement_dlg = False

[y_rampRate]
label: Ramp rate [Y]
datatype = DOUBLE
unit: T/s
# Field to Current Ratio (as specified in spec sheet): 0.01877 T/A
# Ramp rate (as specified in spec sheet): 0.1290 A/s
# ratio between current and magnetic field multiplied by maximum ramp limits from datasheet: 0.01877 * 0.1290 = 0.00242133
low_lim = 0.0
high_lim = 0.00242133
get_cmd = RAMP:RATE:FIELD:1?
set_cmd = CONF:RAMP:RATE:FIELD 1, <*>, 0.0024
section = Y direction
group = Y magnet
show_in_measurement_dlg = False

[z_rampRate]
label: Ramp rate [Z]
datatype = DOUBLE
unit: T/s
# Field to Current Ratio (as specified in spec sheet): 0.1132 T/A
# Ramp rate (as specified in spec sheet): 0.0486 A/s
# ratio between current and magnetic field multiplied by maximum ramp limits from datasheet: 0.1132 * 0.0486 = 0.00550152
low_lim = 0.0
high_lim = 0.00550152
get_cmd = RAMP:RATE:FIELD:1?
set_cmd = CONF:RAMP:RATE:FIELD 1, <*>, 0.00550152
section = Z direction
group = Z magnet
show_in_measurement_dlg = False

[x_rampState]
label: Ramp state [X]
datatype = COMBO
combo_def_1 = Ramping
combo_def_2 = Holding
combo_def_3 = Paused
combo_def_4 = Manual up
combo_def_5 = Manual down
combo_def_6 = Ramping to zero
combo_def_7 = Quench detected
combo_def_8 = At zero
combo_def_9 = Heating switch
combo_def_10 = Cooling switch
get_cmd = STATE?
section = X direction
permission = READ
group = X magnet
show_in_measurement_dlg = True

[y_rampState]
label: Ramp state [Y]
datatype = COMBO
combo_def_1 = Ramping
combo_def_2 = Holding
combo_def_3 = Paused
combo_def_4 = Manual up
combo_def_5 = Manual down
combo_def_6 = Ramping to zero
combo_def_7 = Quench detected
combo_def_8 = At zero
combo_def_9 = Heating switch
combo_def_10 = Cooling switch
get_cmd = STATE?
section = Y direction
permission = READ
group = Y magnet
show_in_measurement_dlg = True

[z_rampState]
label: Ramp state [Z]
datatype = COMBO
combo_def_1 = Ramping
combo_def_2 = Holding
combo_def_3 = Paused
combo_def_4 = Manual up
combo_def_5 = Manual down
combo_def_6 = Ramping to zero
combo_def_7 = Quench detected
combo_def_8 = At zero
combo_def_9 = Heating switch
combo_def_10 = Cooling switch
get_cmd = STATE?
section = Z direction
permission = READ
group = Z magnet
show_in_measurement_dlg = True

[x_persistent]
label: Persistent [X]
datatype = COMBO
combo_def_1 = Driven mode
combo_def_2 = Persistent mode
get_cmd = PERS?
section = X direction
permission = READ
group = X magnet
show_in_measurement_dlg = True

[y_persistent]
label: Persistent [Y]
datatype = COMBO
combo_def_1 = Driven mode
combo_def_2 = Persistent mode
get_cmd = PERS?
section = Y direction
permission = READ
group = Y magnet
show_in_measurement_dlg = True

[z_persistent]
label: Persistent [Z]
datatype = COMBO
combo_def_1 = Driven mode
combo_def_2 = Persistent mode
get_cmd = PERS?
section = Z direction
permission = READ
group = Z magnet
show_in_measurement_dlg = True

[x_quench]
label: Quench [X]
datatype = BOOLEAN
get_cmd = QU?
set_cmd = QU <*>
section = X direction
group = X magnet
show_in_measurement_dlg = False

[y_quench]
label: Quench [Y]
datatype = BOOLEAN
get_cmd = QU?
set_cmd = QU <*>
section = Y direction
group = Y magnet
show_in_measurement_dlg = False

[z_quench]
label: Quench [Z]
datatype = BOOLEAN
get_cmd = QU?
set_cmd = QU <*>
section = Z direction
group = Z magnet
show_in_measurement_dlg = False

[x_error]
label: Error [X]
datatype = STRING
get_cmd = SYST:ERR?
section = X direction
permission = READ
group = X magnet
show_in_measurement_dlg = False

[y_error]
label: Error [Y]
datatype = STRING
get_cmd = SYST:ERR?
section = Y direction
permission = READ
group = Y magnet
show_in_measurement_dlg = False

[z_error]
label: Error [Z]
datatype = STRING
get_cmd = SYST:ERR?
section = Z direction
permission = READ
group = Z magnet
show_in_measurement_dlg = False

[coordinate_system]
label = Coordinate system
datatype = COMBO
combo_def_1 = Cartesian
combo_def_2 = Spherical
section = Global parameters
group = Global parameters

[radius]
label = Combined field
datatype = DOUBLE
unit = T
low_lim = -1.0
high_lim = 1.0
section = Global parameters
group = Global parameters
# state_quant = coordinate_system
# state_value_1 = Spherical

[constant_radius]
label = Constant radius
datatype = DOUBLE
low_lim = -1.0
high_lim = 1.0
section = Global parameters
group = Global parameters

[phi]
label = Phi
datatype = DOUBLE
section = Global parameters
group = Global parameters
# state_quant = coordinate_system
# state_value_1 = Spherical

[constant_phi]
label = Constant phi
datatype = DOUBLE
section = Global parameters
group = Global parameters

[theta]
label = Theta
datatype = DOUBLE
section = Global parameters
group = Global parameters
# state_quant = coordinate_system
# state_value_1 = Spherical

[constant_theta]
label = Constant theta
datatype = DOUBLE
section = Global parameters
group = Global parameters

[x_ramp]
label = Start ramping
datatype = BUTTON
section = X direction
group = X magnet
permission = WRITE

[y_ramp]
label = Start ramping
datatype = BUTTON
section = Y direction
group = Y magnet
permission = WRITE

[z_ramp]
label = Start ramping
datatype = BUTTON
section = Z direction
group = Z magnet
permission = WRITE

[x_pause]
label = Pause ramping
datatype = BUTTON
section = X direction
group = X magnet
permission = WRITE

[y_pause]
label = Pause ramping
datatype = BUTTON
section = Y direction
group = Y magnet
permission = WRITE

[z_pause]
label = Pause ramping
datatype = BUTTON
section = Z direction
group = Z magnet
permission = WRITE

[x_zero]
label = Ramp to zero
datatype = BUTTON
section = X direction
group = X magnet
permission = WRITE

[y_zero]
label = Ramp to zero
datatype = BUTTON
section = Y direction
group = Y magnet
permission = WRITE

[z_zero]
label = Ramp to zero
datatype = BUTTON
section = Z direction
group = Z magnet
permission = WRITE
