# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: LNHRII DAC

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: LNHRII_SP1060

interface: TCPIP
address: 196.254.100.100 # note: the address has to be of the form 196.254.xxx.xxx

# Don't send configuration
startup: Do nothing

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: LHNRII SP1060

# check that the response to IDN?
# check_model = True
# model_cmd = IDN?
# model_id_1 = LNHR DAC II SP1060

# Options of the instrumets

# General VISA settings for the instrument.

[VISA settings]
# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: True

# reset interface at startup
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Dac always respond, even to SET commands. But the driver handles all the reads.
always_read_after_write: False

term_char: CR+LF
tcpip_specify_port: True
tcpip_port: 23

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
#######################################################################
### Signal Inputs #####################################################
#######################################################################


[Dac1]
label: Voltage applied to dac1
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac2]
label: Voltage applied to dac2
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac3]
label: Voltage applied to dac3
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac4]
label: Voltage applied to dac4
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac5]
label: Voltage applied to dac5
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac6]
label: Voltage applied to dac6
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac7]
label: Voltage applied to dac7
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac8]
label: Voltage applied to dac8
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac9]
label: Voltage applied to dac9
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac10]
label: Voltage applied to dac10
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac11]
label: Voltage applied to dac11
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac12]
label: Voltage applied to dac12
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -10
high_lim: 10
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***
