# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Tektronix FCA3100

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Tektronix_FCA3100


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: ERROR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: RWLOCK

# Final commands sent to the instrument when closing the driver
final: LOCAL

# Send Go-to-local over GPIB interface after closing instrument
gpib_go_to_local: True

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
[timestats]
datatype: VECTOR
unit: s
get_cmd: CALCulate:AVERage:ALL?

[mean_time]
datatype: DOUBLE
unit: s
permission: NONE

[standard_dev]
datatype: DOUBLE
unit: s
permission: NONE

[min_val]
datatype: DOUBLE
unit: s
permission: NONE

[max_val]
datatype: DOUBLE
unit: s
permission: NONE
