[Zi - About - Copyright]
section = Zi
group = Zi - About
label = Zi - About - Copyright
datatype = STRING
tooltip = <html><body><p><p><b>READ-ONLY!</p></b>Holds the copyright notice.</p><p><b>ZI/ABOUT/COPYRIGHT</b></p></body></html>
get_cmd = ZI/ABOUT/COPYRIGHT

[Zi - About - Dataserver]
section = Zi
group = Zi - About
label = Zi - About - Dataserver
datatype = STRING
tooltip = <html><body><p><p><b>READ-ONLY!</p></b>Contains information about the Zurich Instruments Data Server.</p><p><b>ZI/ABOUT/DATASERVER</b></p></body></html>
get_cmd = ZI/ABOUT/DATASERVER

[Zi - About - Revision]
section = Zi
group = Zi - About
label = Zi - About - Revision
datatype = STRING
tooltip = <html><body><p><p><b>READ-ONLY!</p></b>Contains the revision number of the Zurich Instruments Data Server.</p><p><b>ZI/ABOUT/REVISION</b></p></body></html>
get_cmd = ZI/ABOUT/REVISION

[Zi - About - Version]
section = Zi
group = Zi - About
label = Zi - About - Version
datatype = STRING
tooltip = <html><body><p><p><b>READ-ONLY!</p></b>Contains the version of the LabOne software.</p><p><b>ZI/ABOUT/VERSION</b></p></body></html>
get_cmd = ZI/ABOUT/VERSION

[Zi - Clockbase]
section = Zi
group = Zi
label = Zi - Clockbase
datatype = DOUBLE
tooltip = <html><body><p>A fallback clock frequency that can be used by clients for calculating time bases when no other is available.</p><p><b>ZI/CLOCKBASE</b></p></body></html>
get_cmd = ZI/CLOCKBASE

[Zi - Config - Open]
section = Zi
group = Zi - Config
label = Zi - Config - Open
datatype = COMBO
tooltip = <html><body><p>Enable communication with the LabOne Data Server from other computers in the network.</p><p><ul><li>local: Communication only possible with the local machine.</li><li>network: Communication possible with other machines in the network.</li></ul></p><p><b>ZI/CONFIG/OPEN</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = local
cmd_def_2 = 1
combo_def_2 = network
set_cmd = ZI/CONFIG/OPEN
get_cmd = ZI/CONFIG/OPEN

[Zi - Config - Port]
section = Zi
group = Zi - Config
label = Zi - Config - Port
datatype = STRING
tooltip = <html><body><p>The IP port on which the LabOne Data Server listens.</p><p><b>ZI/CONFIG/PORT</b></p></body></html>
get_cmd = ZI/CONFIG/PORT

[Zi - Mds - Groups - 0 - Devices]
section = Zi
group = Zi - Mds - Groups
label = Zi - Mds - Groups - 0 - Devices
datatype = STRING
tooltip = <html><body><p>Contains a list of devices in this synchronization group.</p><p><b>ZI/MDS/GROUPS/0/DEVICES</b></p></body></html>
set_cmd = ZI/MDS/GROUPS/0/DEVICES
get_cmd = ZI/MDS/GROUPS/0/DEVICES

[Zi - Mds - Groups - 0 - Keepalive]
section = Zi
group = Zi - Mds - Groups
label = Zi - Mds - Groups - 0 - Keepalive
datatype = BOOLEAN
tooltip = <html><body><p>Set by the MDS module to indicate control over this synchronization group.</p><p><b>ZI/MDS/GROUPS/0/KEEPALIVE</b></p></body></html>
set_cmd = ZI/MDS/GROUPS/0/KEEPALIVE
get_cmd = ZI/MDS/GROUPS/0/KEEPALIVE

[Zi - Mds - Groups - 0 - Locked]
section = Zi
group = Zi - Mds - Groups
label = Zi - Mds - Groups - 0 - Locked
datatype = BOOLEAN
tooltip = <html><body><p>Indicates whether the device group is locked by a MDS module.</p><p><b>ZI/MDS/GROUPS/0/LOCKED</b></p></body></html>
set_cmd = ZI/MDS/GROUPS/0/LOCKED
get_cmd = ZI/MDS/GROUPS/0/LOCKED

[Zi - Mds - Groups - 0 - Status]
section = Zi
group = Zi - Mds - Groups
label = Zi - Mds - Groups - 0 - Status
datatype = COMBO
tooltip = <html><body><p>Indicates the status the synchronization group.</p><p><ul><li>-1: Error. An error occurred in the synchronization process.</li><li>0: New</li><li>1: Sync</li><li>2: Alive</li></ul></p><p><b>ZI/MDS/GROUPS/0/STATUS</b></p></body></html>
cmd_def_1 = -1
combo_def_1 = -1
cmd_def_2 = 0
combo_def_2 = 0
cmd_def_3 = 1
combo_def_3 = 1
cmd_def_4 = 2
combo_def_4 = 2
set_cmd = ZI/MDS/GROUPS/0/STATUS
get_cmd = ZI/MDS/GROUPS/0/STATUS

[General settings]
name = Zurich Instruments DataServer
version = 22.02#0.3.0#0.1
driver_path = Zurich_Instruments_DataServer
support_arm = True
support_hardware_loop = True
interface = Other
startup = Do nothing

