[Clockbase]
section = System
group = Clockbase
label = Clockbase
datatype = DOUBLE
unit = Hz
tooltip = <html><body><p>Returns the internal clock frequency of the device.</p><p><b>CLOCKBASE</b></p></body></html>
get_cmd = CLOCKBASE

[System - Extclk]
section = System
group = System
label = System - Extclk
datatype = COMBO
tooltip = <html><body><p>10 MHz reference clock source.</p><p><ul><li>internal: Internal 10 MHz clock is used as the frequency and time base reference.</li><li>external: An external 10 MHz clock is used as the frequency and time base reference. Provide a clean and stable 10 MHz reference to the appropriate back panel connector.</li></ul></p><p><b>SYSTEM/EXTCLK</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = internal
cmd_def_2 = 1
combo_def_2 = external
set_cmd = SYSTEM/EXTCLK
get_cmd = SYSTEM/EXTCLK

[System - Fwrevision]
section = System
group = System
label = System - Fwrevision
datatype = STRING
tooltip = <html><body><p><p><b>READ-ONLY!</p></b>Revision of the device-internal controller software.</p><p><b>SYSTEM/FWREVISION</b></p></body></html>
get_cmd = SYSTEM/FWREVISION

[System - Preampenable]
section = System
group = System
label = System - Preampenable
datatype = BOOLEAN
tooltip = <html><body><p>Enables the preamplifier.</p><p><b>SYSTEM/PREAMPENABLE</b></p></body></html>
set_cmd = SYSTEM/PREAMPENABLE
get_cmd = SYSTEM/PREAMPENABLE

[System - Properties - Freqresolution]
section = System
group = System - Properties
label = System - Properties - Freqresolution
datatype = DOUBLE
tooltip = <html><body><p>The number of bits used to represent a frequency.</p><p><b>SYSTEM/PROPERTIES/FREQRESOLUTION</b></p></body></html>
get_cmd = SYSTEM/PROPERTIES/FREQRESOLUTION

[System - Properties - Freqscaling]
section = System
group = System - Properties
label = System - Properties - Freqscaling
datatype = DOUBLE
tooltip = <html><body><p>The scale factor to use to convert a frequency represented as a freqresolution-bit integer to a floating point value.</p><p><b>SYSTEM/PROPERTIES/FREQSCALING</b></p></body></html>
get_cmd = SYSTEM/PROPERTIES/FREQSCALING

[System - Properties - Maxfreq]
section = System
group = System - Properties
label = System - Properties - Maxfreq
datatype = DOUBLE
tooltip = <html><body><p>The maximum oscillator frequency that can be set.</p><p><b>SYSTEM/PROPERTIES/MAXFREQ</b></p></body></html>
get_cmd = SYSTEM/PROPERTIES/MAXFREQ

[System - Properties - Maxtimeconstant]
section = System
group = System - Properties
label = System - Properties - Maxtimeconstant
datatype = DOUBLE
tooltip = <html><body><p>The maximum demodulator time constant that can be set.</p><p><b>SYSTEM/PROPERTIES/MAXTIMECONSTANT</b></p></body></html>
get_cmd = SYSTEM/PROPERTIES/MAXTIMECONSTANT

[System - Properties - Minfreq]
section = System
group = System - Properties
label = System - Properties - Minfreq
datatype = DOUBLE
tooltip = <html><body><p>The minimum oscillator frequency that can be set.</p><p><b>SYSTEM/PROPERTIES/MINFREQ</b></p></body></html>
get_cmd = SYSTEM/PROPERTIES/MINFREQ

[System - Properties - Mintimeconstant]
section = System
group = System - Properties
label = System - Properties - Mintimeconstant
datatype = DOUBLE
tooltip = <html><body><p>The minimum demodulator time constant that can be set.</p><p><b>SYSTEM/PROPERTIES/MINTIMECONSTANT</b></p></body></html>
get_cmd = SYSTEM/PROPERTIES/MINTIMECONSTANT

[System - Properties - Negativefreq]
section = System
group = System - Properties
label = System - Properties - Negativefreq
datatype = DOUBLE
tooltip = <html><body><p>Indicates whether negative frequencies are supported.</p><p><b>SYSTEM/PROPERTIES/NEGATIVEFREQ</b></p></body></html>
get_cmd = SYSTEM/PROPERTIES/NEGATIVEFREQ

[System - Properties - Timebase]
section = System
group = System - Properties
label = System - Properties - Timebase
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimal time difference between two timestamps. The value is equal to 1/(maximum sampling rate).</p><p><b>SYSTEM/PROPERTIES/TIMEBASE</b></p></body></html>
get_cmd = SYSTEM/PROPERTIES/TIMEBASE

[Currins - 0 - Autorange]
section = In - Out
group = Currins
label = Currins - 0 - Autorange
datatype = DOUBLE
tooltip = <html><body><p>Automatic adjustment of the Range to about two times the maximum current input amplitude measured over about 100 ms.</p><p><b>CURRINS/0/AUTORANGE</b></p></body></html>
set_cmd = CURRINS/0/AUTORANGE
get_cmd = CURRINS/0/AUTORANGE

[Currins - 0 - Float]
section = In - Out
group = Currins
label = Currins - 0 - Float
datatype = COMBO
tooltip = <html><body><p>Switches the input between floating (ON) and connected grounds (OFF). This setting applies both to the voltage and the current input. It is recommended to discharge the test device before connecting or to enable this setting only after the signal source has been connected to the Signal Input in grounded mode.</p><p><ul><li>off: GND connected</li><li>on: Floating</li></ul></p><p><b>CURRINS/0/FLOAT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = on
set_cmd = CURRINS/0/FLOAT
get_cmd = CURRINS/0/FLOAT

[Currins - 0 - Max]
section = In - Out
group = Currins
label = Currins - 0 - Max
datatype = DOUBLE
tooltip = <html><body><p>Gives the maximum measured input current (peak value) normalized to input range.</p><p><b>CURRINS/0/MAX</b></p></body></html>
set_cmd = CURRINS/0/MAX
get_cmd = CURRINS/0/MAX

[Currins - 0 - Min]
section = In - Out
group = Currins
label = Currins - 0 - Min
datatype = DOUBLE
tooltip = <html><body><p>Gives the minimum measured input current (peak value) normalized to input range.</p><p><b>CURRINS/0/MIN</b></p></body></html>
set_cmd = CURRINS/0/MIN
get_cmd = CURRINS/0/MIN

[Currins - 0 - On]
section = In - Out
group = Currins
label = Currins - 0 - On
datatype = BOOLEAN
tooltip = <html><body><p>Enables the current input.</p><p><b>CURRINS/0/ON</b></p></body></html>
set_cmd = CURRINS/0/ON
get_cmd = CURRINS/0/ON

[Currins - 0 - Range]
section = In - Out
group = Currins
label = Currins - 0 - Range
datatype = DOUBLE
unit = A
tooltip = <html><body><p>Defines the gain of the current input amplifier. The range should exceed the incoming signal by roughly a factor of two including a potential DC offset. The instrument selects the next higher available range relative to a value inserted by the user. A suitable choice of this setting optimizes the accuracy and signal-to-noise ratio by ensuring that the full dynamic range of the input ADC is used.</p><p><b>CURRINS/0/RANGE</b></p></body></html>
set_cmd = CURRINS/0/RANGE
get_cmd = CURRINS/0/RANGE

[Currins - 0 - Rangestep - Trigger]
section = In - Out
group = Currins - Rangestep
label = Currins - 0 - Rangestep - Trigger
datatype = DOUBLE
tooltip = <html><body><p>Switches to the next appropriate input range such that the range fits best with the measured input current.</p><p><b>CURRINS/0/RANGESTEP/TRIGGER</b></p></body></html>
set_cmd = CURRINS/0/RANGESTEP/TRIGGER
get_cmd = CURRINS/0/RANGESTEP/TRIGGER

[Currins - 0 - Scaling]
section = In - Out
group = Currins
label = Currins - 0 - Scaling
datatype = DOUBLE
tooltip = <html><body><p>Applies the given scale factor to the current input.</p><p><b>CURRINS/0/SCALING</b></p></body></html>
set_cmd = CURRINS/0/SCALING
get_cmd = CURRINS/0/SCALING

[Oscs - 0 - Freq]
section = In - Out
group = OSC 0
label = Oscs - 0 - Freq
datatype = DOUBLE
unit = Hz
tooltip = <html><body><p>Frequency control for each oscillator.</p><p><b>OSCS/0/FREQ</b></p></body></html>
set_cmd = OSCS/0/FREQ
get_cmd = OSCS/0/FREQ

[Sigins - 0 - Ac]
section = In - Out
group = Sigins
label = Sigins - 0 - Ac
datatype = COMBO
tooltip = <html><body><p>Defines the input coupling for the Signal Inputs. AC coupling inserts a high-pass filter.</p><p><ul><li>dc: DC coupling</li><li>ac: AC coupling</li></ul></p><p><b>SIGINS/0/AC</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = dc
cmd_def_2 = 1
combo_def_2 = ac
set_cmd = SIGINS/0/AC
get_cmd = SIGINS/0/AC

[Sigins - 0 - Autorange]
section = In - Out
group = Sigins
label = Sigins - 0 - Autorange
datatype = DOUBLE
tooltip = <html><body><p>Automatic adjustment of the Range to about two times the maximum signal input amplitude measured over about 100 ms.</p><p><b>SIGINS/0/AUTORANGE</b></p></body></html>
set_cmd = SIGINS/0/AUTORANGE
get_cmd = SIGINS/0/AUTORANGE

[Sigins - 0 - Diff]
section = In - Out
group = Sigins
label = Sigins - 0 - Diff
datatype = COMBO
tooltip = <html><body><p>Switches between single ended (OFF) and differential (ON) measurements.</p><p><ul><li>off: Single ended voltage input</li><li>on: Differential voltage input</li></ul></p><p><b>SIGINS/0/DIFF</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = on
set_cmd = SIGINS/0/DIFF
get_cmd = SIGINS/0/DIFF

[Sigins - 0 - Float]
section = In - Out
group = Sigins
label = Sigins - 0 - Float
datatype = COMBO
tooltip = <html><body><p>Switches the input between floating (ON) and connected to ground (OFF). This setting applies both to the voltage and the current input. It is recommended to discharge the test device before connecting or to enable this setting only after the signal source has been connected to the Signal Input in grounded mode.</p><p><ul><li>off: GND connected</li><li>on: Floating</li></ul></p><p><b>SIGINS/0/FLOAT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = on
set_cmd = SIGINS/0/FLOAT
get_cmd = SIGINS/0/FLOAT

[Sigins - 0 - Imp50]
section = In - Out
group = Sigins
label = Sigins - 0 - Imp50
datatype = BOOLEAN
tooltip = <html><body><p>Switches between 50 Ohm (ON) and 10 M Ohm (OFF).</p><p><ul><li>10_MOhm: 10 M Ohm</li><li>50_Ohm: 50 Ohm</li></ul></p><p><b>SIGINS/0/IMP50</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = 10_MOhm
cmd_def_2 = 1
combo_def_2 = 50_Ohm
set_cmd = SIGINS/0/IMP50
get_cmd = SIGINS/0/IMP50

[Sigins - 0 - Max]
section = In - Out
group = Sigins
label = Sigins - 0 - Max
datatype = DOUBLE
tooltip = <html><body><p>Indicates the maximum measured value at the input normalized to input range.</p><p><b>SIGINS/0/MAX</b></p></body></html>
set_cmd = SIGINS/0/MAX
get_cmd = SIGINS/0/MAX

[Sigins - 0 - Min]
section = In - Out
group = Sigins
label = Sigins - 0 - Min
datatype = DOUBLE
tooltip = <html><body><p>Indicates the minimum measured value at the input normalized to input range.</p><p><b>SIGINS/0/MIN</b></p></body></html>
set_cmd = SIGINS/0/MIN
get_cmd = SIGINS/0/MIN

[Sigins - 0 - On]
section = In - Out
group = Sigins
label = Sigins - 0 - On
datatype = BOOLEAN
tooltip = <html><body><p>Enables the signal input.</p><p><b>SIGINS/0/ON</b></p></body></html>
set_cmd = SIGINS/0/ON
get_cmd = SIGINS/0/ON

[Sigins - 0 - Range]
section = In - Out
group = Sigins
label = Sigins - 0 - Range
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Defines the gain of the analog input amplifier. The range should exceed the incoming signal by roughly a factor two including a potential DC offset. The instrument selects the next higher available range relative to a value inserted by the user. A suitable choice of this setting optimizes the accuracy and signal-to-noise ratio by ensuring that the full dynamic range of the input ADC is used.</p><p><b>SIGINS/0/RANGE</b></p></body></html>
set_cmd = SIGINS/0/RANGE
get_cmd = SIGINS/0/RANGE

[Sigins - 0 - Rangestep - Trigger]
section = In - Out
group = Sigins - Rangestep
label = Sigins - 0 - Rangestep - Trigger
datatype = DOUBLE
tooltip = <html><body><p>Switches to the next appropriate input range such that the range fits best with the measured input signal amplitude.</p><p><b>SIGINS/0/RANGESTEP/TRIGGER</b></p></body></html>
set_cmd = SIGINS/0/RANGESTEP/TRIGGER
get_cmd = SIGINS/0/RANGESTEP/TRIGGER

[Sigins - 0 - Scaling]
section = In - Out
group = Sigins
label = Sigins - 0 - Scaling
datatype = DOUBLE
tooltip = <html><body><p>Applies the given scaling factor to the input signal.</p><p><b>SIGINS/0/SCALING</b></p></body></html>
set_cmd = SIGINS/0/SCALING
get_cmd = SIGINS/0/SCALING

[Sigouts - 0 - Add]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Add
datatype = DOUBLE
tooltip = <html><body><p>The signal supplied to the Aux Input 1 is added to the signal output. For differential output the added signal is a common mode offset.</p><p><b>SIGOUTS/0/ADD</b></p></body></html>
set_cmd = SIGOUTS/0/ADD
get_cmd = SIGOUTS/0/ADD

[Sigouts - 0 - Amplitudes - 1]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Amplitudes - 1
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Sets the peak amplitude that the oscillator assigned to the given demodulation channel contributes to the signal output.</p><p><b>SIGOUTS/0/AMPLITUDES/1</b></p></body></html>
set_cmd = SIGOUTS/0/AMPLITUDES/1
get_cmd = SIGOUTS/0/AMPLITUDES/1

[Sigouts - 0 - Autorange]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Autorange
datatype = DOUBLE
tooltip = <html><body><p>If enabled, selects the most suited output range automatically.</p><p><b>SIGOUTS/0/AUTORANGE</b></p></body></html>
set_cmd = SIGOUTS/0/AUTORANGE
get_cmd = SIGOUTS/0/AUTORANGE

[Sigouts - 0 - Diff]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Diff
datatype = DOUBLE
tooltip = <html><body><p>Switch between single-ended output (OFF) and differential output (ON). In differential mode the signal swing is defined between Signal Output +V / -V.</p><p><b>SIGOUTS/0/DIFF</b></p></body></html>
set_cmd = SIGOUTS/0/DIFF
get_cmd = SIGOUTS/0/DIFF

[Sigouts - 0 - Enables - 1]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Enables - 1
datatype = BOOLEAN
unit = V
tooltip = <html><body><p>Enables individual output signal amplitude. When the MD option is used, it is possible to generate signals being the linear combination of the available demodulator frequencies.</p><p><b>SIGOUTS/0/ENABLES/1</b></p></body></html>
set_cmd = SIGOUTS/0/ENABLES/1
get_cmd = SIGOUTS/0/ENABLES/1

[Sigouts - 0 - Imp50]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Imp50
datatype = BOOLEAN
tooltip = <html><body><p>Select the load impedance between 50 Ohm and HiZ. The impedance of the output is always 50 Ohm. For a load impedance of 50 Ohm the displayed voltage is half the output voltage to reflect the voltage seen at the load.</p><p><ul><li>high_impedance: HiZ</li><li>50_Ohm: 50 Ohm</li></ul></p><p><b>SIGOUTS/0/IMP50</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = high_impedance
cmd_def_2 = 1
combo_def_2 = 50_Ohm
set_cmd = SIGOUTS/0/IMP50
get_cmd = SIGOUTS/0/IMP50

[Sigouts - 0 - Offset]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Offset
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.</p><p><b>SIGOUTS/0/OFFSET</b></p></body></html>
set_cmd = SIGOUTS/0/OFFSET
get_cmd = SIGOUTS/0/OFFSET

[Sigouts - 0 - On]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - On
datatype = BOOLEAN
tooltip = <html><body><p>Enabling/Disabling the Signal Output. Corresponds to the blue LED indicator on the instrument front panel.</p><p><b>SIGOUTS/0/ON</b></p></body></html>
set_cmd = SIGOUTS/0/ON
get_cmd = SIGOUTS/0/ON

[Sigouts - 0 - Over]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Over
datatype = DOUBLE
tooltip = <html><body><p>Indicates that the signal output is overloaded.</p><p><b>SIGOUTS/0/OVER</b></p></body></html>
get_cmd = SIGOUTS/0/OVER

[Sigouts - 0 - Range]
section = In - Out
group = Sigout 0
label = Sigouts - 0 - Range
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Sets the output voltage range. The instrument selects the next higher available range.</p><p><b>SIGOUTS/0/RANGE</b></p></body></html>
set_cmd = SIGOUTS/0/RANGE
get_cmd = SIGOUTS/0/RANGE

[Extrefs - 0 - Adcselect]
section = EXT Refs
group = Extrefs
label = Extrefs - 0 - Adcselect
datatype = DOUBLE
tooltip = <html><body><p><p><b>READ-ONLY!</p></b>Indicates the input signal selection for the selected demodulator.</p><p><ul><li>0: Signal Input 1 is connected to the corresponding demodulator.</li><li>1: Current Input 1 is connected to the corresponding demodulator.</li><li>2: Trigger Input 1 is connected to the corresponding demodulator.</li><li>3: Trigger Input 2 is connected to the corresponding demodulator.</li><li>4: Auxiliary Output 1 is connected to the corresponding demodulator.</li><li>5: Auxiliary Output 2 is connected to the corresponding demodulator.</li><li>6: Auxiliary Output 3 is connected to the corresponding demodulator.</li><li>7: Auxiliary Output 4 is connected to the corresponding demodulator.</li><li>8: Auxiliary Input 1 is connected to the corresponding demodulator.</li><li>9: Auxiliary Input 2 is connected to the corresponding demodulator.</li></ul></p><p><b>EXTREFS/0/ADCSELECT</b></p></body></html>
get_cmd = EXTREFS/0/ADCSELECT

[Extrefs - 0 - Automode]
section = EXT Refs
group = Extrefs
label = Extrefs - 0 - Automode
datatype = COMBO
tooltip = <html><body><p>This defines the type of automatic adaptation of parameters in the PID used for Ext Ref.</p><p><ul><li>off: No automatic adaption.</li><li>coefficients_only: The coefficients of the PID controller are automatically set.</li><li>low_bandwidth: The PID coefficients, the filter bandwidth and the output limits are automatically set using a low bandwidth.</li><li>high_bandwidth: The PID coefficients, the filter bandwidth and the output limits are automatically set using a high bandwidth.</li><li>all: All parameters of the PID including the center frequency are adapted.</li></ul></p><p><b>EXTREFS/0/AUTOMODE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = coefficients_only
cmd_def_3 = 2
combo_def_3 = low_bandwidth
cmd_def_4 = 3
combo_def_4 = high_bandwidth
cmd_def_5 = 4
combo_def_5 = all
set_cmd = EXTREFS/0/AUTOMODE
get_cmd = EXTREFS/0/AUTOMODE

[Extrefs - 0 - Demodselect]
section = EXT Refs
group = Extrefs
label = Extrefs - 0 - Demodselect
datatype = DOUBLE
tooltip = <html><body><p>Indicates the demodulator connected to the extref channel.</p><p><b>EXTREFS/0/DEMODSELECT</b></p></body></html>
set_cmd = EXTREFS/0/DEMODSELECT
get_cmd = EXTREFS/0/DEMODSELECT

[Extrefs - 0 - Enable]
section = EXT Refs
group = Extrefs
label = Extrefs - 0 - Enable
datatype = BOOLEAN
tooltip = <html><body><p>Enables the external reference.</p><p><b>EXTREFS/0/ENABLE</b></p></body></html>
set_cmd = EXTREFS/0/ENABLE
get_cmd = EXTREFS/0/ENABLE

[Extrefs - 0 - Locked]
section = EXT Refs
group = Extrefs
label = Extrefs - 0 - Locked
datatype = BOOLEAN
tooltip = <html><body><p>Indicates whether the external reference is locked.</p><p><b>EXTREFS/0/LOCKED</b></p></body></html>
get_cmd = EXTREFS/0/LOCKED

[Extrefs - 0 - Oscselect]
section = EXT Refs
group = Extrefs
label = Extrefs - 0 - Oscselect
datatype = DOUBLE
tooltip = <html><body><p>Indicates which oscillator is being locked to the external reference.</p><p><b>EXTREFS/0/OSCSELECT</b></p></body></html>
get_cmd = EXTREFS/0/OSCSELECT

[Scopes - 0 - Channel]
section = Scope
group = Scope 0
label = Scopes - 0 - Channel
datatype = COMBO
tooltip = <html><body><p>Activates the scope channels.</p><p><ul><li>1: Only channel 1 is active.</li><li>2: Only channel 2 is active.</li><li>both: Both, channel 1 and 2 are active.</li></ul></p><p><b>SCOPES/0/CHANNEL</b></p></body></html>
cmd_def_1 = 1
combo_def_1 = 1
cmd_def_2 = 2
combo_def_2 = 2
cmd_def_3 = 3
combo_def_3 = both
set_cmd = SCOPES/0/CHANNEL
get_cmd = SCOPES/0/CHANNEL

[Scopes - 0 - Channels - 0 - Bwlimit]
section = Scope
group = Scope 0 Channel 0
label = Scopes - 0 - Channels - 0 - Bwlimit
datatype = COMBO
tooltip = <html><body><p>Selects between sample decimation and sample averaging. Averaging avoids aliasing, but may conceal signal peaks.</p><p><ul><li>on: Selects sample averaging for sample rates lower than the maximal available sampling rate.</li><li>off: Selects sample decimation for sample rates lower than the maximal available sampling rate.</li></ul></p><p><b>SCOPES/0/CHANNELS/0/BWLIMIT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = on
cmd_def_2 = 1
combo_def_2 = off
set_cmd = SCOPES/0/CHANNELS/0/BWLIMIT
get_cmd = SCOPES/0/CHANNELS/0/BWLIMIT

[Scopes - 0 - Channels - 0 - Fullscale]
section = Scope
group = Scope 0 Channel 0
label = Scopes - 0 - Channels - 0 - Fullscale
datatype = DOUBLE
tooltip = <html><body><p>Indicates the full scale value of the scope channel.</p><p><b>SCOPES/0/CHANNELS/0/FULLSCALE</b></p></body></html>
set_cmd = SCOPES/0/CHANNELS/0/FULLSCALE
get_cmd = SCOPES/0/CHANNELS/0/FULLSCALE

[Scopes - 0 - Channels - 0 - Inputselect]
section = Scope
group = Scope 0 Channel 0
label = Scopes - 0 - Channels - 0 - Inputselect
datatype = COMBO
tooltip = <html><body><p>Selects the scope input signal.</p><p><ul><li>sigin0: Signal Input 1</li><li>currin0: Current Input 1</li><li>trigin0: Trigger Input 1</li><li>trigin1: Trigger Input 2</li><li>auxout0: Aux Output 1. Requires an installed digitizer (DIG) option.</li><li>auxout1: Aux Output 2. Requires an installed digitizer (DIG) option.</li><li>auxout2: Aux Output 3. Requires an installed digitizer (DIG) option.</li><li>auxout3: Aux Output 4. Requires an installed digitizer (DIG) option.</li><li>auxin0: Aux Input 1</li><li>auxin1: Aux Input 2</li><li>demod1: Osc φ Demod 2</li><li>demod3: Osc φ Demod 4</li><li>trigout0: Trigger Output 1</li><li>trigout1: Trigger Output 2</li><li>demod0_x: Demod 1 X. Requires an installed digitizer (DIG) option.</li><li>demod1_x: Demod 2 X. Requires an installed digitizer (DIG) option.</li><li>demod2_x: Demod 3 X. Requires an installed digitizer (DIG) option.</li><li>demod3_x: Demod 4 X. Requires an installed digitizer (DIG) option.</li><li>demod0_y: Demod 1 Y. Requires an installed digitizer (DIG) option.</li><li>demod1_y: Demod 2 Y. Requires an installed digitizer (DIG) option.</li><li>demod2_y: Demod 3 Y. Requires an installed digitizer (DIG) option.</li><li>demod3_y: Demod 4 Y. Requires an installed digitizer (DIG) option.</li><li>demod0_r: Demod 1 R. Requires an installed digitizer (DIG) option.</li><li>demod1_r: Demod 2 R. Requires an installed digitizer (DIG) option.</li><li>demod2_r: Demod 3 R. Requires an installed digitizer (DIG) option.</li><li>demod3_r: Demod 4 R. Requires an installed digitizer (DIG) option.</li><li>demod0_theta: Demod 1 Θ. Requires an installed digitizer (DIG) option.</li><li>demod1_theta: Demod 2 Θ. Requires an installed digitizer (DIG) option.</li><li>demod2_theta: Demod 3 Θ. Requires an installed digitizer (DIG) option.</li><li>demod3_theta: Demod 4 Θ. Requires an installed digitizer (DIG) option.</li><li>pid0_value: PID 1 value. Requires an installed digitizer (DIG) option.</li><li>pid1_value: PID 2 value. Requires an installed digitizer (DIG) option.</li><li>pid2_value: PID 3 value. Requires an installed digitizer (DIG) option.</li><li>pid3_value: PID 4 value. Requires an installed digitizer (DIG) option.</li><li>pid0_shift: PID 1 Shift. Requires an installed digitizer (DIG) option.</li><li>pid1_shift: PID 2 Shift. Requires an installed digitizer (DIG) option.</li><li>pid2_shift: PID 3 Shift. Requires an installed digitizer (DIG) option.</li><li>pid3_shift: PID 4 Shift. Requires an installed digitizer (DIG) option.</li><li>160: Reserved for future use.</li><li>161: Reserved for future use.</li><li>pid0_error: PID 1 Error. Requires an installed digitizer (DIG) option.</li><li>pid1_error: PID 2 Error. Requires an installed digitizer (DIG) option.</li><li>pid2_error: PID 3 Error. Requires an installed digitizer (DIG) option.</li><li>pid3_error: PID 4 Error. Requires an installed digitizer (DIG) option.</li><li>240: Reserved for future use.</li><li>241: Reserved for future use.</li><li>242: Reserved for future use.</li><li>243: Reserved for future use.</li></ul></p><p><b>SCOPES/0/CHANNELS/0/INPUTSELECT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = sigin0
cmd_def_2 = 1
combo_def_2 = currin0
cmd_def_3 = 2
combo_def_3 = trigin0
cmd_def_4 = 3
combo_def_4 = trigin1
cmd_def_5 = 4
combo_def_5 = auxout0
cmd_def_6 = 5
combo_def_6 = auxout1
cmd_def_7 = 6
combo_def_7 = auxout2
cmd_def_8 = 7
combo_def_8 = auxout3
cmd_def_9 = 8
combo_def_9 = auxin0
cmd_def_10 = 9
combo_def_10 = auxin1
cmd_def_11 = 10
combo_def_11 = demod1
cmd_def_12 = 11
combo_def_12 = demod3
cmd_def_13 = 14
combo_def_13 = trigout0
cmd_def_14 = 15
combo_def_14 = trigout1
cmd_def_15 = 16
combo_def_15 = demod0_x
cmd_def_16 = 17
combo_def_16 = demod1_x
cmd_def_17 = 18
combo_def_17 = demod2_x
cmd_def_18 = 19
combo_def_18 = demod3_x
cmd_def_19 = 32
combo_def_19 = demod0_y
cmd_def_20 = 33
combo_def_20 = demod1_y
cmd_def_21 = 34
combo_def_21 = demod2_y
cmd_def_22 = 35
combo_def_22 = demod3_y
cmd_def_23 = 48
combo_def_23 = demod0_r
cmd_def_24 = 49
combo_def_24 = demod1_r
cmd_def_25 = 50
combo_def_25 = demod2_r
cmd_def_26 = 51
combo_def_26 = demod3_r
cmd_def_27 = 64
combo_def_27 = demod0_theta
cmd_def_28 = 65
combo_def_28 = demod1_theta
cmd_def_29 = 66
combo_def_29 = demod2_theta
cmd_def_30 = 67
combo_def_30 = demod3_theta
cmd_def_31 = 80
combo_def_31 = pid0_value
cmd_def_32 = 81
combo_def_32 = pid1_value
cmd_def_33 = 82
combo_def_33 = pid2_value
cmd_def_34 = 83
combo_def_34 = pid3_value
cmd_def_35 = 144
combo_def_35 = pid0_shift
cmd_def_36 = 145
combo_def_36 = pid1_shift
cmd_def_37 = 146
combo_def_37 = pid2_shift
cmd_def_38 = 147
combo_def_38 = pid3_shift
cmd_def_39 = 160
combo_def_39 = 160
cmd_def_40 = 161
combo_def_40 = 161
cmd_def_41 = 208
combo_def_41 = pid0_error
cmd_def_42 = 209
combo_def_42 = pid1_error
cmd_def_43 = 210
combo_def_43 = pid2_error
cmd_def_44 = 211
combo_def_44 = pid3_error
cmd_def_45 = 240
combo_def_45 = 240
cmd_def_46 = 241
combo_def_46 = 241
cmd_def_47 = 242
combo_def_47 = 242
cmd_def_48 = 243
combo_def_48 = 243
set_cmd = SCOPES/0/CHANNELS/0/INPUTSELECT
get_cmd = SCOPES/0/CHANNELS/0/INPUTSELECT

[Scopes - 0 - Channels - 0 - Limitlower]
section = Scope
group = Scope 0 Channel 0
label = Scopes - 0 - Channels - 0 - Limitlower
datatype = DOUBLE
tooltip = <html><body><p>Lower limit of the scope full scale range. For demodulator, PID, Boxcar, and AU signals the limit should be adjusted so that the signal covers the specified range to achieve optimal resolution.</p><p><b>SCOPES/0/CHANNELS/0/LIMITLOWER</b></p></body></html>
set_cmd = SCOPES/0/CHANNELS/0/LIMITLOWER
get_cmd = SCOPES/0/CHANNELS/0/LIMITLOWER

[Scopes - 0 - Channels - 0 - Limitupper]
section = Scope
group = Scope 0 Channel 0
label = Scopes - 0 - Channels - 0 - Limitupper
datatype = DOUBLE
tooltip = <html><body><p>Upper limit of the scope full scale range. For demodulator, PID, Boxcar, and AU signals the limit should be adjusted so that the signal covers the specified range to achieve optimal resolution.</p><p><b>SCOPES/0/CHANNELS/0/LIMITUPPER</b></p></body></html>
set_cmd = SCOPES/0/CHANNELS/0/LIMITUPPER
get_cmd = SCOPES/0/CHANNELS/0/LIMITUPPER

[Scopes - 0 - Channels - 0 - Offset]
section = Scope
group = Scope 0 Channel 0
label = Scopes - 0 - Channels - 0 - Offset
datatype = DOUBLE
tooltip = <html><body><p>Indicates the offset value of the scope channel.</p><p><b>SCOPES/0/CHANNELS/0/OFFSET</b></p></body></html>
set_cmd = SCOPES/0/CHANNELS/0/OFFSET
get_cmd = SCOPES/0/CHANNELS/0/OFFSET

[Scopes - 0 - Channels - 1 - Bwlimit]
section = Scope
group = Scope 0 Channel 1
label = Scopes - 0 - Channels - 1 - Bwlimit
datatype = COMBO
tooltip = <html><body><p>Selects between sample decimation and sample averaging. Averaging avoids aliasing, but may conceal signal peaks.</p><p><ul><li>on: Selects sample averaging for sample rates lower than the maximal available sampling rate.</li><li>off: Selects sample decimation for sample rates lower than the maximal available sampling rate.</li></ul></p><p><b>SCOPES/0/CHANNELS/1/BWLIMIT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = on
cmd_def_2 = 1
combo_def_2 = off
set_cmd = SCOPES/0/CHANNELS/1/BWLIMIT
get_cmd = SCOPES/0/CHANNELS/1/BWLIMIT

[Scopes - 0 - Channels - 1 - Fullscale]
section = Scope
group = Scope 0 Channel 1
label = Scopes - 0 - Channels - 1 - Fullscale
datatype = DOUBLE
tooltip = <html><body><p>Indicates the full scale value of the scope channel.</p><p><b>SCOPES/0/CHANNELS/1/FULLSCALE</b></p></body></html>
set_cmd = SCOPES/0/CHANNELS/1/FULLSCALE
get_cmd = SCOPES/0/CHANNELS/1/FULLSCALE

[Scopes - 0 - Channels - 1 - Inputselect]
section = Scope
group = Scope 0 Channel 1
label = Scopes - 0 - Channels - 1 - Inputselect
datatype = COMBO
tooltip = <html><body><p>Selects the scope input signal.</p><p><ul><li>sigin0: Signal Input 1</li><li>currin0: Current Input 1</li><li>trigin0: Trigger Input 1</li><li>trigin1: Trigger Input 2</li><li>auxout0: Aux Output 1. Requires an installed digitizer (DIG) option.</li><li>auxout1: Aux Output 2. Requires an installed digitizer (DIG) option.</li><li>auxout2: Aux Output 3. Requires an installed digitizer (DIG) option.</li><li>auxout3: Aux Output 4. Requires an installed digitizer (DIG) option.</li><li>auxin0: Aux Input 1</li><li>auxin1: Aux Input 2</li><li>demod1: Osc φ Demod 2</li><li>demod3: Osc φ Demod 4</li><li>trigout0: Trigger Output 1</li><li>trigout1: Trigger Output 2</li><li>demod0_x: Demod 1 X. Requires an installed digitizer (DIG) option.</li><li>demod1_x: Demod 2 X. Requires an installed digitizer (DIG) option.</li><li>demod2_x: Demod 3 X. Requires an installed digitizer (DIG) option.</li><li>demod3_x: Demod 4 X. Requires an installed digitizer (DIG) option.</li><li>demod0_y: Demod 1 Y. Requires an installed digitizer (DIG) option.</li><li>demod1_y: Demod 2 Y. Requires an installed digitizer (DIG) option.</li><li>demod2_y: Demod 3 Y. Requires an installed digitizer (DIG) option.</li><li>demod3_y: Demod 4 Y. Requires an installed digitizer (DIG) option.</li><li>demod0_r: Demod 1 R. Requires an installed digitizer (DIG) option.</li><li>demod1_r: Demod 2 R. Requires an installed digitizer (DIG) option.</li><li>demod2_r: Demod 3 R. Requires an installed digitizer (DIG) option.</li><li>demod3_r: Demod 4 R. Requires an installed digitizer (DIG) option.</li><li>demod0_theta: Demod 1 Θ. Requires an installed digitizer (DIG) option.</li><li>demod1_theta: Demod 2 Θ. Requires an installed digitizer (DIG) option.</li><li>demod2_theta: Demod 3 Θ. Requires an installed digitizer (DIG) option.</li><li>demod3_theta: Demod 4 Θ. Requires an installed digitizer (DIG) option.</li><li>pid0_value: PID 1 value. Requires an installed digitizer (DIG) option.</li><li>pid1_value: PID 2 value. Requires an installed digitizer (DIG) option.</li><li>pid2_value: PID 3 value. Requires an installed digitizer (DIG) option.</li><li>pid3_value: PID 4 value. Requires an installed digitizer (DIG) option.</li><li>pid0_shift: PID 1 Shift. Requires an installed digitizer (DIG) option.</li><li>pid1_shift: PID 2 Shift. Requires an installed digitizer (DIG) option.</li><li>pid2_shift: PID 3 Shift. Requires an installed digitizer (DIG) option.</li><li>pid3_shift: PID 4 Shift. Requires an installed digitizer (DIG) option.</li><li>160: Reserved for future use.</li><li>161: Reserved for future use.</li><li>pid0_error: PID 1 Error. Requires an installed digitizer (DIG) option.</li><li>pid1_error: PID 2 Error. Requires an installed digitizer (DIG) option.</li><li>pid2_error: PID 3 Error. Requires an installed digitizer (DIG) option.</li><li>pid3_error: PID 4 Error. Requires an installed digitizer (DIG) option.</li><li>240: Reserved for future use.</li><li>241: Reserved for future use.</li><li>242: Reserved for future use.</li><li>243: Reserved for future use.</li></ul></p><p><b>SCOPES/0/CHANNELS/1/INPUTSELECT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = sigin0
cmd_def_2 = 1
combo_def_2 = currin0
cmd_def_3 = 2
combo_def_3 = trigin0
cmd_def_4 = 3
combo_def_4 = trigin1
cmd_def_5 = 4
combo_def_5 = auxout0
cmd_def_6 = 5
combo_def_6 = auxout1
cmd_def_7 = 6
combo_def_7 = auxout2
cmd_def_8 = 7
combo_def_8 = auxout3
cmd_def_9 = 8
combo_def_9 = auxin0
cmd_def_10 = 9
combo_def_10 = auxin1
cmd_def_11 = 10
combo_def_11 = demod1
cmd_def_12 = 11
combo_def_12 = demod3
cmd_def_13 = 14
combo_def_13 = trigout0
cmd_def_14 = 15
combo_def_14 = trigout1
cmd_def_15 = 16
combo_def_15 = demod0_x
cmd_def_16 = 17
combo_def_16 = demod1_x
cmd_def_17 = 18
combo_def_17 = demod2_x
cmd_def_18 = 19
combo_def_18 = demod3_x
cmd_def_19 = 32
combo_def_19 = demod0_y
cmd_def_20 = 33
combo_def_20 = demod1_y
cmd_def_21 = 34
combo_def_21 = demod2_y
cmd_def_22 = 35
combo_def_22 = demod3_y
cmd_def_23 = 48
combo_def_23 = demod0_r
cmd_def_24 = 49
combo_def_24 = demod1_r
cmd_def_25 = 50
combo_def_25 = demod2_r
cmd_def_26 = 51
combo_def_26 = demod3_r
cmd_def_27 = 64
combo_def_27 = demod0_theta
cmd_def_28 = 65
combo_def_28 = demod1_theta
cmd_def_29 = 66
combo_def_29 = demod2_theta
cmd_def_30 = 67
combo_def_30 = demod3_theta
cmd_def_31 = 80
combo_def_31 = pid0_value
cmd_def_32 = 81
combo_def_32 = pid1_value
cmd_def_33 = 82
combo_def_33 = pid2_value
cmd_def_34 = 83
combo_def_34 = pid3_value
cmd_def_35 = 144
combo_def_35 = pid0_shift
cmd_def_36 = 145
combo_def_36 = pid1_shift
cmd_def_37 = 146
combo_def_37 = pid2_shift
cmd_def_38 = 147
combo_def_38 = pid3_shift
cmd_def_39 = 160
combo_def_39 = 160
cmd_def_40 = 161
combo_def_40 = 161
cmd_def_41 = 208
combo_def_41 = pid0_error
cmd_def_42 = 209
combo_def_42 = pid1_error
cmd_def_43 = 210
combo_def_43 = pid2_error
cmd_def_44 = 211
combo_def_44 = pid3_error
cmd_def_45 = 240
combo_def_45 = 240
cmd_def_46 = 241
combo_def_46 = 241
cmd_def_47 = 242
combo_def_47 = 242
cmd_def_48 = 243
combo_def_48 = 243
set_cmd = SCOPES/0/CHANNELS/1/INPUTSELECT
get_cmd = SCOPES/0/CHANNELS/1/INPUTSELECT

[Scopes - 0 - Channels - 1 - Limitlower]
section = Scope
group = Scope 0 Channel 1
label = Scopes - 0 - Channels - 1 - Limitlower
datatype = DOUBLE
tooltip = <html><body><p>Lower limit of the scope full scale range. For demodulator, PID, Boxcar, and AU signals the limit should be adjusted so that the signal covers the specified range to achieve optimal resolution.</p><p><b>SCOPES/0/CHANNELS/1/LIMITLOWER</b></p></body></html>
set_cmd = SCOPES/0/CHANNELS/1/LIMITLOWER
get_cmd = SCOPES/0/CHANNELS/1/LIMITLOWER

[Scopes - 0 - Channels - 1 - Limitupper]
section = Scope
group = Scope 0 Channel 1
label = Scopes - 0 - Channels - 1 - Limitupper
datatype = DOUBLE
tooltip = <html><body><p>Upper limit of the scope full scale range. For demodulator, PID, Boxcar, and AU signals the limit should be adjusted so that the signal covers the specified range to achieve optimal resolution.</p><p><b>SCOPES/0/CHANNELS/1/LIMITUPPER</b></p></body></html>
set_cmd = SCOPES/0/CHANNELS/1/LIMITUPPER
get_cmd = SCOPES/0/CHANNELS/1/LIMITUPPER

[Scopes - 0 - Channels - 1 - Offset]
section = Scope
group = Scope 0 Channel 1
label = Scopes - 0 - Channels - 1 - Offset
datatype = DOUBLE
tooltip = <html><body><p>Indicates the offset value of the scope channel.</p><p><b>SCOPES/0/CHANNELS/1/OFFSET</b></p></body></html>
set_cmd = SCOPES/0/CHANNELS/1/OFFSET
get_cmd = SCOPES/0/CHANNELS/1/OFFSET

[Scopes - 0 - Enable]
section = Scope
group = Scope 0
label = Scopes - 0 - Enable
datatype = BOOLEAN
tooltip = <html><body><p>Enables the acquisition of scope shots.</p><p><b>SCOPES/0/ENABLE</b></p></body></html>
set_cmd = SCOPES/0/ENABLE
get_cmd = SCOPES/0/ENABLE

[Scopes - 0 - Length]
section = Scope
group = Scope 0
label = Scopes - 0 - Length
datatype = DOUBLE
tooltip = <html><body><p>Defines the length of the recorded Scope shot in number of samples.</p><p><b>SCOPES/0/LENGTH</b></p></body></html>
set_cmd = SCOPES/0/LENGTH
get_cmd = SCOPES/0/LENGTH

[Scopes - 0 - Segments - Count]
section = Scope
group = Scope 0
label = Scopes - 0 - Segments - Count
datatype = DOUBLE
tooltip = <html><body><p>Specifies the number of segments to be recorded in device memory. The maximum scope shot size is given by the available memory divided by the number of segments. This functionality requires the DIG option.</p><p><b>SCOPES/0/SEGMENTS/COUNT</b></p></body></html>
set_cmd = SCOPES/0/SEGMENTS/COUNT
get_cmd = SCOPES/0/SEGMENTS/COUNT

[Scopes - 0 - Segments - Enable]
section = Scope
group = Scope 0
label = Scopes - 0 - Segments - Enable
datatype = BOOLEAN
tooltip = <html><body><p>Enable segmented scope recording. This allows for full bandwidth recording of scope shots with a minimum dead time between individual shots. This functionality requires the DIG option.</p><p><b>SCOPES/0/SEGMENTS/ENABLE</b></p></body></html>
set_cmd = SCOPES/0/SEGMENTS/ENABLE
get_cmd = SCOPES/0/SEGMENTS/ENABLE

[Scopes - 0 - Single]
section = Scope
group = Scope 0
label = Scopes - 0 - Single
datatype = BOOLEAN
tooltip = <html><body><p>Puts the Scope into single shot mode.</p><p><b>SCOPES/0/SINGLE</b></p></body></html>
set_cmd = SCOPES/0/SINGLE
get_cmd = SCOPES/0/SINGLE

[Scopes - 0 - Time]
section = Scope
group = Scope 0
label = Scopes - 0 - Time
datatype = COMBO
tooltip = <html><body><p>Defines the time base of the scope from the divider exponent of the instrument`s clock base. The resulting sampling time is 2^n/clockbase.</p><p><ul><li>0: 60 MHz</li><li>1: 30 MHz</li><li>2: 15 MHz</li><li>3: 7.5 MHz</li><li>4: 3.75 MHz</li><li>5: 1.88 MHz</li><li>6: 938 kHz</li><li>7: 469 kHz</li><li>8: 234 kHz</li><li>9: 117 kHz</li><li>10: 58.6 kHz</li><li>11: 29.3 kHz</li><li>12: 14.6 kHz</li><li>13: 7.32 kHz</li><li>14: 3.66 kHz</li><li>15: 1.83 kHz</li></ul></p><p><b>SCOPES/0/TIME</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = 0
cmd_def_2 = 1
combo_def_2 = 1
cmd_def_3 = 2
combo_def_3 = 2
cmd_def_4 = 3
combo_def_4 = 3
cmd_def_5 = 4
combo_def_5 = 4
cmd_def_6 = 5
combo_def_6 = 5
cmd_def_7 = 6
combo_def_7 = 6
cmd_def_8 = 7
combo_def_8 = 7
cmd_def_9 = 8
combo_def_9 = 8
cmd_def_10 = 9
combo_def_10 = 9
cmd_def_11 = 10
combo_def_11 = 10
cmd_def_12 = 11
combo_def_12 = 11
cmd_def_13 = 12
combo_def_13 = 12
cmd_def_14 = 13
combo_def_14 = 13
cmd_def_15 = 14
combo_def_15 = 14
cmd_def_16 = 15
combo_def_16 = 15
set_cmd = SCOPES/0/TIME
get_cmd = SCOPES/0/TIME

[Scopes - 0 - Trigchannel]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigchannel
datatype = COMBO
tooltip = <html><body><p>Selects the trigger source signal.</p><p><ul><li>sigin0: Signal Input 1</li><li>currin0: Current Input 1</li><li>trigin0: Trigger Input 1</li><li>trigin1: Trigger Input 2</li><li>auxout0: Aux Output 1. Requires an installed digitizer (DIG) option.</li><li>auxout1: Aux Output 2. Requires an installed digitizer (DIG) option.</li><li>auxout2: Aux Output 3. Requires an installed digitizer (DIG) option.</li><li>auxout3: Aux Output 4. Requires an installed digitizer (DIG) option.</li><li>auxin0: Aux Input 1</li><li>auxin1: Aux Input 2</li><li>demod1: Osc φ Demod 2</li><li>demod3: Osc φ Demod 4</li><li>trigout0: Trigger Output 1</li><li>trigout1: Trigger Output 2</li><li>demod0_x: Demod 1 X. Requires an installed digitizer (DIG) option.</li><li>demod1_x: Demod 2 X. Requires an installed digitizer (DIG) option.</li><li>demod2_x: Demod 3 X. Requires an installed digitizer (DIG) option.</li><li>demod3_x: Demod 4 X. Requires an installed digitizer (DIG) option.</li><li>demod0_y: Demod 1 Y. Requires an installed digitizer (DIG) option.</li><li>demod1_y: Demod 2 Y. Requires an installed digitizer (DIG) option.</li><li>demod2_y: Demod 3 Y. Requires an installed digitizer (DIG) option.</li><li>demod3_y: Demod 4 Y. Requires an installed digitizer (DIG) option.</li><li>demod0_r: Demod 1 R. Requires an installed digitizer (DIG) option.</li><li>demod1_r: Demod 2 R. Requires an installed digitizer (DIG) option.</li><li>demod2_r: Demod 3 R. Requires an installed digitizer (DIG) option.</li><li>demod3_r: Demod 4 R. Requires an installed digitizer (DIG) option.</li><li>demod0_theta: Demod 1 Θ. Requires an installed digitizer (DIG) option.</li><li>demod1_theta: Demod 2 Θ. Requires an installed digitizer (DIG) option.</li><li>demod2_theta: Demod 3 Θ. Requires an installed digitizer (DIG) option.</li><li>demod3_theta: Demod 4 Θ. Requires an installed digitizer (DIG) option.</li><li>pid0_value: PID 1 value. Requires an installed digitizer (DIG) option.</li><li>pid1_value: PID 2 value. Requires an installed digitizer (DIG) option.</li><li>pid2_value: PID 3 value. Requires an installed digitizer (DIG) option.</li><li>pid3_value: PID 4 value. Requires an installed digitizer (DIG) option.</li><li>pid0_shift: PID 1 Shift. Requires an installed digitizer (DIG) option.</li><li>pid1_shift: PID 2 Shift. Requires an installed digitizer (DIG) option.</li><li>pid2_shift: PID 3 Shift. Requires an installed digitizer (DIG) option.</li><li>pid3_shift: PID 4 Shift. Requires an installed digitizer (DIG) option.</li><li>pid0_error: PID 1 Error. Requires an installed digitizer (DIG) option.</li><li>pid1_error: PID 2 Error. Requires an installed digitizer (DIG) option.</li><li>pid2_error: PID 3 Error. Requires an installed digitizer (DIG) option.</li><li>pid3_error: PID 4 Error. Requires an installed digitizer (DIG) option.</li><li>tu0_filtered: TU 1 Filtered Value. Requires an installed digitizer (DIG) option.</li><li>tu1_filtered: TU 2 Filtered Value. Requires an installed digitizer (DIG) option.</li><li>tu2_filtered: TU 3 Filtered Value. Requires an installed digitizer (DIG) option.</li><li>tu3_filtered: TU 4 Filtered Value. Requires an installed digitizer (DIG) option.</li></ul></p><p><b>SCOPES/0/TRIGCHANNEL</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = sigin0
cmd_def_2 = 1
combo_def_2 = currin0
cmd_def_3 = 2
combo_def_3 = trigin0
cmd_def_4 = 3
combo_def_4 = trigin1
cmd_def_5 = 4
combo_def_5 = auxout0
cmd_def_6 = 5
combo_def_6 = auxout1
cmd_def_7 = 6
combo_def_7 = auxout2
cmd_def_8 = 7
combo_def_8 = auxout3
cmd_def_9 = 8
combo_def_9 = auxin0
cmd_def_10 = 9
combo_def_10 = auxin1
cmd_def_11 = 10
combo_def_11 = demod1
cmd_def_12 = 11
combo_def_12 = demod3
cmd_def_13 = 14
combo_def_13 = trigout0
cmd_def_14 = 15
combo_def_14 = trigout1
cmd_def_15 = 16
combo_def_15 = demod0_x
cmd_def_16 = 17
combo_def_16 = demod1_x
cmd_def_17 = 18
combo_def_17 = demod2_x
cmd_def_18 = 19
combo_def_18 = demod3_x
cmd_def_19 = 32
combo_def_19 = demod0_y
cmd_def_20 = 33
combo_def_20 = demod1_y
cmd_def_21 = 34
combo_def_21 = demod2_y
cmd_def_22 = 35
combo_def_22 = demod3_y
cmd_def_23 = 48
combo_def_23 = demod0_r
cmd_def_24 = 49
combo_def_24 = demod1_r
cmd_def_25 = 50
combo_def_25 = demod2_r
cmd_def_26 = 51
combo_def_26 = demod3_r
cmd_def_27 = 64
combo_def_27 = demod0_theta
cmd_def_28 = 65
combo_def_28 = demod1_theta
cmd_def_29 = 66
combo_def_29 = demod2_theta
cmd_def_30 = 67
combo_def_30 = demod3_theta
cmd_def_31 = 80
combo_def_31 = pid0_value
cmd_def_32 = 81
combo_def_32 = pid1_value
cmd_def_33 = 82
combo_def_33 = pid2_value
cmd_def_34 = 83
combo_def_34 = pid3_value
cmd_def_35 = 144
combo_def_35 = pid0_shift
cmd_def_36 = 145
combo_def_36 = pid1_shift
cmd_def_37 = 146
combo_def_37 = pid2_shift
cmd_def_38 = 147
combo_def_38 = pid3_shift
cmd_def_39 = 208
combo_def_39 = pid0_error
cmd_def_40 = 209
combo_def_40 = pid1_error
cmd_def_41 = 210
combo_def_41 = pid2_error
cmd_def_42 = 211
combo_def_42 = pid3_error
cmd_def_43 = 224
combo_def_43 = tu0_filtered
cmd_def_44 = 225
combo_def_44 = tu1_filtered
cmd_def_45 = 226
combo_def_45 = tu2_filtered
cmd_def_46 = 227
combo_def_46 = tu3_filtered
set_cmd = SCOPES/0/TRIGCHANNEL
get_cmd = SCOPES/0/TRIGCHANNEL

[Scopes - 0 - Trigdelay]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigdelay
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Trigger position relative to reference. A positive delay results in less data being acquired before the trigger point, a negative delay results in more data being acquired before the trigger point.</p><p><b>SCOPES/0/TRIGDELAY</b></p></body></html>
set_cmd = SCOPES/0/TRIGDELAY
get_cmd = SCOPES/0/TRIGDELAY

[Scopes - 0 - Trigenable]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigenable
datatype = COMBO
tooltip = <html><body><p>When triggering is enabled scope data are acquired every time the defined trigger condition is met.</p><p><ul><li>off: Continuous scope shot acquisition</li><li>on: Trigger based scope shot acquisition</li></ul></p><p><b>SCOPES/0/TRIGENABLE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = on
set_cmd = SCOPES/0/TRIGENABLE
get_cmd = SCOPES/0/TRIGENABLE

[Scopes - 0 - Trigfalling]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigfalling
datatype = DOUBLE
tooltip = <html><body><p>When set (1), enables falling edge triggering. This settings is synchronized with the settings done in the /TRIGSLOPE node.</p><p><b>SCOPES/0/TRIGFALLING</b></p></body></html>
set_cmd = SCOPES/0/TRIGFALLING
get_cmd = SCOPES/0/TRIGFALLING

[Scopes - 0 - Trigforce]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigforce
datatype = BOOLEAN
tooltip = <html><body><p>Forces a trigger event.</p><p><b>SCOPES/0/TRIGFORCE</b></p></body></html>
set_cmd = SCOPES/0/TRIGFORCE
get_cmd = SCOPES/0/TRIGFORCE

[Scopes - 0 - Triggate - Enable]
section = Scope
group = Scope 0
label = Scopes - 0 - Triggate - Enable
datatype = BOOLEAN
tooltip = <html><body><p>If enabled the trigger will be gated by the trigger gating input signal. This feature requires the DIG option.</p><p><b>SCOPES/0/TRIGGATE/ENABLE</b></p></body></html>
set_cmd = SCOPES/0/TRIGGATE/ENABLE
get_cmd = SCOPES/0/TRIGGATE/ENABLE

[Scopes - 0 - Triggate - Inputselect]
section = Scope
group = Scope 0
label = Scopes - 0 - Triggate - Inputselect
datatype = COMBO
tooltip = <html><body><p>Select the signal source used for trigger gating if gating is enabled. This feature requires the DIG option.</p><p><ul><li>trigin0_high: Only trigger if the Trigger Input 1 is at high level.</li><li>trigin0_low: Only trigger if the Trigger Input 1 is at low level.</li><li>trigin1_high: Only trigger if the Trigger Input 2 is at high level.</li><li>trigin1_low: Only trigger if the Trigger Input 2 is at low level.</li></ul></p><p><b>SCOPES/0/TRIGGATE/INPUTSELECT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = trigin0_high
cmd_def_2 = 1
combo_def_2 = trigin0_low
cmd_def_3 = 2
combo_def_3 = trigin1_high
cmd_def_4 = 3
combo_def_4 = trigin1_low
set_cmd = SCOPES/0/TRIGGATE/INPUTSELECT
get_cmd = SCOPES/0/TRIGGATE/INPUTSELECT

[Scopes - 0 - Trigholdoff]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigholdoff
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Defines the time before the trigger is rearmed after a recording event.</p><p><b>SCOPES/0/TRIGHOLDOFF</b></p></body></html>
set_cmd = SCOPES/0/TRIGHOLDOFF
get_cmd = SCOPES/0/TRIGHOLDOFF

[Scopes - 0 - Trigholdoffcount]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigholdoffcount
datatype = DOUBLE
tooltip = <html><body><p>Defines the trigger event number that will trigger the next recording after a recording event. A value of `1` will start a recording for each trigger event.</p><p><b>SCOPES/0/TRIGHOLDOFFCOUNT</b></p></body></html>
set_cmd = SCOPES/0/TRIGHOLDOFFCOUNT
get_cmd = SCOPES/0/TRIGHOLDOFFCOUNT

[Scopes - 0 - Trigholdoffmode]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigholdoffmode
datatype = COMBO
tooltip = <html><body><p>Selects the holdoff mode.</p><p><ul><li>time: Holdoff is defined as time (s).</li><li>number_of_events: Holdoff is defined as number of events.</li></ul></p><p><b>SCOPES/0/TRIGHOLDOFFMODE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = time
cmd_def_2 = 1
combo_def_2 = number_of_events
set_cmd = SCOPES/0/TRIGHOLDOFFMODE
get_cmd = SCOPES/0/TRIGHOLDOFFMODE

[Scopes - 0 - Trighysteresis - Absolute]
section = Scope
group = Scope 0
label = Scopes - 0 - Trighysteresis - Absolute
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Defines the voltage the source signal must deviate from the trigger level before the trigger is rearmed again. Set to 0 to turn it off. The sign is defined by the Edge setting.</p><p><b>SCOPES/0/TRIGHYSTERESIS/ABSOLUTE</b></p></body></html>
set_cmd = SCOPES/0/TRIGHYSTERESIS/ABSOLUTE
get_cmd = SCOPES/0/TRIGHYSTERESIS/ABSOLUTE

[Scopes - 0 - Trighysteresis - Mode]
section = Scope
group = Scope 0
label = Scopes - 0 - Trighysteresis - Mode
datatype = COMBO
tooltip = <html><body><p>Selects the mode to define the hysteresis strength. The relative mode will work best over the full input range as long as the analog input signal does not suffer from excessive noise.</p><p><ul><li>absolute: Selects absolute hysteresis.</li><li>relative: Selects a hysteresis relative to the adjusted full scale signal input range.</li></ul></p><p><b>SCOPES/0/TRIGHYSTERESIS/MODE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = absolute
cmd_def_2 = 1
combo_def_2 = relative
set_cmd = SCOPES/0/TRIGHYSTERESIS/MODE
get_cmd = SCOPES/0/TRIGHYSTERESIS/MODE

[Scopes - 0 - Trighysteresis - Relative]
section = Scope
group = Scope 0
label = Scopes - 0 - Trighysteresis - Relative
datatype = DOUBLE
tooltip = <html><body><p>Hysteresis relative to the adjusted full scale signal input range. A hysteresis value larger than 1 (100 percent) is allowed.</p><p><b>SCOPES/0/TRIGHYSTERESIS/RELATIVE</b></p></body></html>
set_cmd = SCOPES/0/TRIGHYSTERESIS/RELATIVE
get_cmd = SCOPES/0/TRIGHYSTERESIS/RELATIVE

[Scopes - 0 - Triglevel]
section = Scope
group = Scope 0
label = Scopes - 0 - Triglevel
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Defines the trigger level.</p><p><b>SCOPES/0/TRIGLEVEL</b></p></body></html>
set_cmd = SCOPES/0/TRIGLEVEL
get_cmd = SCOPES/0/TRIGLEVEL

[Scopes - 0 - Trigreference]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigreference
datatype = DOUBLE
tooltip = <html><body><p>Trigger reference position relative to the acquired data. Default is 50 percent (0.5) which results in a reference point in the middle of the acquired data.</p><p><b>SCOPES/0/TRIGREFERENCE</b></p></body></html>
set_cmd = SCOPES/0/TRIGREFERENCE
get_cmd = SCOPES/0/TRIGREFERENCE

[Scopes - 0 - Trigrising]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigrising
datatype = DOUBLE
tooltip = <html><body><p>When set (1), enables rising edge triggering. This settings is synchronized with the settings done in the /TRIGFALLING node.</p><p><b>SCOPES/0/TRIGRISING</b></p></body></html>
set_cmd = SCOPES/0/TRIGRISING
get_cmd = SCOPES/0/TRIGRISING

[Scopes - 0 - Trigslope]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigslope
datatype = COMBO
tooltip = <html><body><p>Sets on which slope of the trigger signal the scope should trigger. This setting is synchronized with the settings done in the /TRIGFALLING and /TRIGRISING nodes.</p><p><ul><li>none: None</li><li>rising: Rising edge triggered.</li><li>falling: Falling edge triggered.</li><li>both: Triggers on both the rising and falling edge.</li></ul></p><p><b>SCOPES/0/TRIGSLOPE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = none
cmd_def_2 = 1
combo_def_2 = rising
cmd_def_3 = 2
combo_def_3 = falling
cmd_def_4 = 3
combo_def_4 = both
set_cmd = SCOPES/0/TRIGSLOPE
get_cmd = SCOPES/0/TRIGSLOPE

[Scopes - 0 - Trigstate]
section = Scope
group = Scope 0
label = Scopes - 0 - Trigstate
datatype = DOUBLE
tooltip = <html><body><p>When 1, indicates that the trigger signal satifies the conditions of the trigger.</p><p><b>SCOPES/0/TRIGSTATE</b></p></body></html>
get_cmd = SCOPES/0/TRIGSTATE

[Dios - 0 - Auxdrive]
section = DIO
group = DIO 0
label = Dios - 0 - Auxdrive
datatype = DOUBLE
tooltip = <html><body><p>Not used. Reserved for future use.</p><p><b>DIOS/0/AUXDRIVE</b></p></body></html>
get_cmd = DIOS/0/AUXDRIVE

[Dios - 0 - Decimation]
section = DIO
group = DIO 0
label = Dios - 0 - Decimation
datatype = DOUBLE
tooltip = <html><body><p>Sets the decimation factor for DIO data streamed to the host computer.</p><p><b>DIOS/0/DECIMATION</b></p></body></html>
set_cmd = DIOS/0/DECIMATION
get_cmd = DIOS/0/DECIMATION

[Dios - 0 - Drive]
section = DIO
group = DIO 0
label = Dios - 0 - Drive
datatype = DOUBLE
tooltip = <html><body><p>When on (1), the corresponding 8-bit bus is in output mode. When off (0), it is in input mode. Bit 0 corresponds to the least significant byte. For example, the value 1 drives the least significant byte, the value 8 drives the most significant byte.</p><p><b>DIOS/0/DRIVE</b></p></body></html>
set_cmd = DIOS/0/DRIVE
get_cmd = DIOS/0/DRIVE

[Dios - 0 - Extclk]
section = DIO
group = DIO 0
label = Dios - 0 - Extclk
datatype = COMBO
tooltip = <html><body><p>Select DIO internal or external clocking.</p><p><ul><li>internal: The DIO is internally clocked with a fixed frequency of 60 MHz.</li><li>external: The DIO is externally clocked with a clock signal connected to DIO Pin 68. The available range is from 1 Hz up to the internal clock frequency.</li></ul></p><p><b>DIOS/0/EXTCLK</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = internal
cmd_def_2 = 1
combo_def_2 = external
set_cmd = DIOS/0/EXTCLK
get_cmd = DIOS/0/EXTCLK

[Dios - 0 - Input]
section = DIO
group = DIO 0
label = Dios - 0 - Input
datatype = DOUBLE
tooltip = <html><body><p>Gives the value of the DIO input for those bytes where drive is disabled.</p><p><b>DIOS/0/INPUT</b></p></body></html>
get_cmd = DIOS/0/INPUT

[Dios - 0 - Mode]
section = DIO
group = DIO 0
label = Dios - 0 - Mode
datatype = COMBO
tooltip = <html><body><p>Select DIO mode</p><p><ul><li>manual: Enables manual control of the DIO output bits.</li><li>threshold_unit: Enables setting of DIO output values by the threshold unit.</li></ul></p><p><b>DIOS/0/MODE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = manual
cmd_def_2 = 3
combo_def_2 = threshold_unit
set_cmd = DIOS/0/MODE
get_cmd = DIOS/0/MODE

[Dios - 0 - Output]
section = DIO
group = DIO 0
label = Dios - 0 - Output
datatype = DOUBLE
tooltip = <html><body><p>Sets the value of the DIO output for those bytes where `drive` is enabled.</p><p><b>DIOS/0/OUTPUT</b></p></body></html>
set_cmd = DIOS/0/OUTPUT
get_cmd = DIOS/0/OUTPUT

[Triggers - In - 0 - Autothreshold]
section = DIO
group = Triggers - In
label = Triggers - In - 0 - Autothreshold
datatype = DOUBLE
tooltip = <html><body><p>Automatically adjust the trigger threshold. The level is adjusted to fall in the center of the applied transitions.</p><p><b>TRIGGERS/IN/0/AUTOTHRESHOLD</b></p></body></html>
set_cmd = TRIGGERS/IN/0/AUTOTHRESHOLD
get_cmd = TRIGGERS/IN/0/AUTOTHRESHOLD

[Triggers - In - 0 - Level]
section = DIO
group = Triggers - In
label = Triggers - In - 0 - Level
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50 percent amplitude for digital input and consider the trigger hysteresis.</p><p><b>TRIGGERS/IN/0/LEVEL</b></p></body></html>
set_cmd = TRIGGERS/IN/0/LEVEL
get_cmd = TRIGGERS/IN/0/LEVEL

[Triggers - In - 1 - Autothreshold]
section = DIO
group = Triggers - In
label = Triggers - In - 1 - Autothreshold
datatype = DOUBLE
tooltip = <html><body><p>Automatically adjust the trigger threshold. The level is adjusted to fall in the center of the applied transitions.</p><p><b>TRIGGERS/IN/1/AUTOTHRESHOLD</b></p></body></html>
set_cmd = TRIGGERS/IN/1/AUTOTHRESHOLD
get_cmd = TRIGGERS/IN/1/AUTOTHRESHOLD

[Triggers - In - 1 - Level]
section = DIO
group = Triggers - In
label = Triggers - In - 1 - Level
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50 percent amplitude for digital input and consider the trigger hysteresis.</p><p><b>TRIGGERS/IN/1/LEVEL</b></p></body></html>
set_cmd = TRIGGERS/IN/1/LEVEL
get_cmd = TRIGGERS/IN/1/LEVEL

[Triggers - Out - 0 - Pulsewidth]
section = DIO
group = Triggers - Out
label = Triggers - Out - 0 - Pulsewidth
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Defines the minimal pulse width for the case of Scope events written to the trigger outputs of the device.</p><p><b>TRIGGERS/OUT/0/PULSEWIDTH</b></p></body></html>
set_cmd = TRIGGERS/OUT/0/PULSEWIDTH
get_cmd = TRIGGERS/OUT/0/PULSEWIDTH

[Triggers - Out - 0 - Source]
section = DIO
group = Triggers - Out
label = Triggers - Out - 0 - Source
datatype = COMBO
tooltip = <html><body><p>Select the signal assigned to the trigger output.</p><p><ul><li>disabled: The output trigger is disabled.</li><li>demod1_phase: Oscillator phase of demod 2 (trigger output channel 1) or demod 4 (trigger output channel 2).</li><li>scope_trigger: Scope Trigger. Requires the DIG Option.</li><li>scope_not_trigger: Scope /Trigger. Requires the DIG Option.</li><li>scope_armed: Scope Armed. Requires the DIG Option.</li><li>scope_not_armed: Scope /Armed. Requires the DIG Option.</li><li>scope_active: Scope Active. Requires the DIG Option.</li><li>scope_not_active: Scope /Active. Requires the DIG Option.</li><li>th_logic_unit0_out: Threshold Logic Unit 1 output.</li><li>th_logic_unit1_out: Threshold Logic Unit 2 output.</li><li>th_logic_unit2_out: Threshold Logic Unit 3 output.</li><li>th_logic_unit3_out: Threshold Logic Unit 4 output.</li><li>mds_sync_out: MDS Sync Out.</li></ul></p><p><b>TRIGGERS/OUT/0/SOURCE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = disabled
cmd_def_2 = 1
combo_def_2 = demod1_phase
cmd_def_3 = 2
combo_def_3 = scope_trigger
cmd_def_4 = 3
combo_def_4 = scope_not_trigger
cmd_def_5 = 4
combo_def_5 = scope_armed
cmd_def_6 = 5
combo_def_6 = scope_not_armed
cmd_def_7 = 6
combo_def_7 = scope_active
cmd_def_8 = 7
combo_def_8 = scope_not_active
cmd_def_9 = 36
combo_def_9 = th_logic_unit0_out
cmd_def_10 = 37
combo_def_10 = th_logic_unit1_out
cmd_def_11 = 38
combo_def_11 = th_logic_unit2_out
cmd_def_12 = 39
combo_def_12 = th_logic_unit3_out
cmd_def_13 = 52
combo_def_13 = mds_sync_out
set_cmd = TRIGGERS/OUT/0/SOURCE
get_cmd = TRIGGERS/OUT/0/SOURCE

[Triggers - Out - 1 - Pulsewidth]
section = DIO
group = Triggers - Out
label = Triggers - Out - 1 - Pulsewidth
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Defines the minimal pulse width for the case of Scope events written to the trigger outputs of the device.</p><p><b>TRIGGERS/OUT/1/PULSEWIDTH</b></p></body></html>
set_cmd = TRIGGERS/OUT/1/PULSEWIDTH
get_cmd = TRIGGERS/OUT/1/PULSEWIDTH

[Triggers - Out - 1 - Source]
section = DIO
group = Triggers - Out
label = Triggers - Out - 1 - Source
datatype = COMBO
tooltip = <html><body><p>Select the signal assigned to the trigger output.</p><p><ul><li>disabled: The output trigger is disabled.</li><li>demod1_phase: Oscillator phase of demod 2 (trigger output channel 1) or demod 4 (trigger output channel 2).</li><li>scope_trigger: Scope Trigger. Requires the DIG Option.</li><li>scope_not_trigger: Scope /Trigger. Requires the DIG Option.</li><li>scope_armed: Scope Armed. Requires the DIG Option.</li><li>scope_not_armed: Scope /Armed. Requires the DIG Option.</li><li>scope_active: Scope Active. Requires the DIG Option.</li><li>scope_not_active: Scope /Active. Requires the DIG Option.</li><li>th_logic_unit0_out: Threshold Logic Unit 1 output.</li><li>th_logic_unit1_out: Threshold Logic Unit 2 output.</li><li>th_logic_unit2_out: Threshold Logic Unit 3 output.</li><li>th_logic_unit3_out: Threshold Logic Unit 4 output.</li><li>mds_sync_out: MDS Sync Out.</li></ul></p><p><b>TRIGGERS/OUT/1/SOURCE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = disabled
cmd_def_2 = 1
combo_def_2 = demod1_phase
cmd_def_3 = 2
combo_def_3 = scope_trigger
cmd_def_4 = 3
combo_def_4 = scope_not_trigger
cmd_def_5 = 4
combo_def_5 = scope_armed
cmd_def_6 = 5
combo_def_6 = scope_not_armed
cmd_def_7 = 6
combo_def_7 = scope_active
cmd_def_8 = 7
combo_def_8 = scope_not_active
cmd_def_9 = 36
combo_def_9 = th_logic_unit0_out
cmd_def_10 = 37
combo_def_10 = th_logic_unit1_out
cmd_def_11 = 38
combo_def_11 = th_logic_unit2_out
cmd_def_12 = 39
combo_def_12 = th_logic_unit3_out
cmd_def_13 = 52
combo_def_13 = mds_sync_out
set_cmd = TRIGGERS/OUT/1/SOURCE
get_cmd = TRIGGERS/OUT/1/SOURCE

[Tu - Logicunits - 0 - Inputs - 0 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 0 - Inputs - 0 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/0/INPUTS/0/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/INPUTS/0/CHANNEL
get_cmd = TU/LOGICUNITS/0/INPUTS/0/CHANNEL

[Tu - Logicunits - 0 - Inputs - 0 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 0 - Inputs - 0 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/0/INPUTS/0/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/INPUTS/0/NOT
get_cmd = TU/LOGICUNITS/0/INPUTS/0/NOT

[Tu - Logicunits - 0 - Inputs - 1 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 0 - Inputs - 1 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/0/INPUTS/1/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/INPUTS/1/CHANNEL
get_cmd = TU/LOGICUNITS/0/INPUTS/1/CHANNEL

[Tu - Logicunits - 0 - Inputs - 1 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 0 - Inputs - 1 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/0/INPUTS/1/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/INPUTS/1/NOT
get_cmd = TU/LOGICUNITS/0/INPUTS/1/NOT

[Tu - Logicunits - 0 - Inputs - 2 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 0 - Inputs - 2 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/0/INPUTS/2/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/INPUTS/2/CHANNEL
get_cmd = TU/LOGICUNITS/0/INPUTS/2/CHANNEL

[Tu - Logicunits - 0 - Inputs - 2 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 0 - Inputs - 2 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/0/INPUTS/2/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/INPUTS/2/NOT
get_cmd = TU/LOGICUNITS/0/INPUTS/2/NOT

[Tu - Logicunits - 0 - Internalvalue]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 0 - Internalvalue
datatype = DOUBLE
tooltip = <html><body><p>Show the value after logical combination but before output settings. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/LOGICUNITS/0/INTERNALVALUE</b></p></body></html>
get_cmd = TU/LOGICUNITS/0/INTERNALVALUE

[Tu - Logicunits - 0 - Invert]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 0 - Invert
datatype = DOUBLE
tooltip = <html><body><p>Changes the output signal to low-active.</p><p><b>TU/LOGICUNITS/0/INVERT</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/INVERT
get_cmd = TU/LOGICUNITS/0/INVERT

[Tu - Logicunits - 0 - Keep]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 0 - Keep
datatype = DOUBLE
tooltip = <html><body><p>Hold the output state indefinitely once it has changed to the activated state.</p><p><b>TU/LOGICUNITS/0/KEEP</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/KEEP
get_cmd = TU/LOGICUNITS/0/KEEP

[Tu - Logicunits - 0 - Ops - 0 - Value]
section = TU
group = Tu - Logicunits - Ops
label = Tu - Logicunits - 0 - Ops - 0 - Value
datatype = COMBO
tooltip = <html><body><p>Logical operation applied to the signals to the left and right of the control.</p><p><ul><li>off: No logical operation selected. No additional signals will be used to generate the output.</li><li>and: Use a logical AND operation.</li><li>or: Use a logical OR operation.</li><li>xor: Use a logical XOR operation.</li></ul></p><p><b>TU/LOGICUNITS/0/OPS/0/VALUE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = and
cmd_def_3 = 2
combo_def_3 = or
cmd_def_4 = 3
combo_def_4 = xor
set_cmd = TU/LOGICUNITS/0/OPS/0/VALUE
get_cmd = TU/LOGICUNITS/0/OPS/0/VALUE

[Tu - Logicunits - 0 - Ops - 1 - Value]
section = TU
group = Tu - Logicunits - Ops
label = Tu - Logicunits - 0 - Ops - 1 - Value
datatype = COMBO
tooltip = <html><body><p>Logical operation applied to the signals to the left and right of the control.</p><p><ul><li>off: No logical operation selected. No additional signals will be used to generate the output.</li><li>and: Use a logical AND operation.</li><li>or: Use a logical OR operation.</li><li>xor: Use a logical XOR operation.</li></ul></p><p><b>TU/LOGICUNITS/0/OPS/1/VALUE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = and
cmd_def_3 = 2
combo_def_3 = or
cmd_def_4 = 3
combo_def_4 = xor
set_cmd = TU/LOGICUNITS/0/OPS/1/VALUE
get_cmd = TU/LOGICUNITS/0/OPS/1/VALUE

[Tu - Logicunits - 0 - Pulsewidth]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 0 - Pulsewidth
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum pulse width for the generated output signal. The width of pulses shorter than this time will be extended.</p><p><b>TU/LOGICUNITS/0/PULSEWIDTH</b></p></body></html>
set_cmd = TU/LOGICUNITS/0/PULSEWIDTH
get_cmd = TU/LOGICUNITS/0/PULSEWIDTH

[Tu - Logicunits - 0 - Value]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 0 - Value
datatype = DOUBLE
tooltip = <html><body><p>Shows the output value of the logic unit. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/LOGICUNITS/0/VALUE</b></p></body></html>
get_cmd = TU/LOGICUNITS/0/VALUE

[Tu - Logicunits - 1 - Inputs - 0 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 1 - Inputs - 0 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/1/INPUTS/0/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/INPUTS/0/CHANNEL
get_cmd = TU/LOGICUNITS/1/INPUTS/0/CHANNEL

[Tu - Logicunits - 1 - Inputs - 0 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 1 - Inputs - 0 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/1/INPUTS/0/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/INPUTS/0/NOT
get_cmd = TU/LOGICUNITS/1/INPUTS/0/NOT

[Tu - Logicunits - 1 - Inputs - 1 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 1 - Inputs - 1 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/1/INPUTS/1/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/INPUTS/1/CHANNEL
get_cmd = TU/LOGICUNITS/1/INPUTS/1/CHANNEL

[Tu - Logicunits - 1 - Inputs - 1 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 1 - Inputs - 1 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/1/INPUTS/1/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/INPUTS/1/NOT
get_cmd = TU/LOGICUNITS/1/INPUTS/1/NOT

[Tu - Logicunits - 1 - Inputs - 2 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 1 - Inputs - 2 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/1/INPUTS/2/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/INPUTS/2/CHANNEL
get_cmd = TU/LOGICUNITS/1/INPUTS/2/CHANNEL

[Tu - Logicunits - 1 - Inputs - 2 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 1 - Inputs - 2 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/1/INPUTS/2/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/INPUTS/2/NOT
get_cmd = TU/LOGICUNITS/1/INPUTS/2/NOT

[Tu - Logicunits - 1 - Internalvalue]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 1 - Internalvalue
datatype = DOUBLE
tooltip = <html><body><p>Show the value after logical combination but before output settings. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/LOGICUNITS/1/INTERNALVALUE</b></p></body></html>
get_cmd = TU/LOGICUNITS/1/INTERNALVALUE

[Tu - Logicunits - 1 - Invert]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 1 - Invert
datatype = DOUBLE
tooltip = <html><body><p>Changes the output signal to low-active.</p><p><b>TU/LOGICUNITS/1/INVERT</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/INVERT
get_cmd = TU/LOGICUNITS/1/INVERT

[Tu - Logicunits - 1 - Keep]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 1 - Keep
datatype = DOUBLE
tooltip = <html><body><p>Hold the output state indefinitely once it has changed to the activated state.</p><p><b>TU/LOGICUNITS/1/KEEP</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/KEEP
get_cmd = TU/LOGICUNITS/1/KEEP

[Tu - Logicunits - 1 - Ops - 0 - Value]
section = TU
group = Tu - Logicunits - Ops
label = Tu - Logicunits - 1 - Ops - 0 - Value
datatype = COMBO
tooltip = <html><body><p>Logical operation applied to the signals to the left and right of the control.</p><p><ul><li>off: No logical operation selected. No additional signals will be used to generate the output.</li><li>and: Use a logical AND operation.</li><li>or: Use a logical OR operation.</li><li>xor: Use a logical XOR operation.</li></ul></p><p><b>TU/LOGICUNITS/1/OPS/0/VALUE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = and
cmd_def_3 = 2
combo_def_3 = or
cmd_def_4 = 3
combo_def_4 = xor
set_cmd = TU/LOGICUNITS/1/OPS/0/VALUE
get_cmd = TU/LOGICUNITS/1/OPS/0/VALUE

[Tu - Logicunits - 1 - Ops - 1 - Value]
section = TU
group = Tu - Logicunits - Ops
label = Tu - Logicunits - 1 - Ops - 1 - Value
datatype = COMBO
tooltip = <html><body><p>Logical operation applied to the signals to the left and right of the control.</p><p><ul><li>off: No logical operation selected. No additional signals will be used to generate the output.</li><li>and: Use a logical AND operation.</li><li>or: Use a logical OR operation.</li><li>xor: Use a logical XOR operation.</li></ul></p><p><b>TU/LOGICUNITS/1/OPS/1/VALUE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = and
cmd_def_3 = 2
combo_def_3 = or
cmd_def_4 = 3
combo_def_4 = xor
set_cmd = TU/LOGICUNITS/1/OPS/1/VALUE
get_cmd = TU/LOGICUNITS/1/OPS/1/VALUE

[Tu - Logicunits - 1 - Pulsewidth]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 1 - Pulsewidth
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum pulse width for the generated output signal. The width of pulses shorter than this time will be extended.</p><p><b>TU/LOGICUNITS/1/PULSEWIDTH</b></p></body></html>
set_cmd = TU/LOGICUNITS/1/PULSEWIDTH
get_cmd = TU/LOGICUNITS/1/PULSEWIDTH

[Tu - Logicunits - 1 - Value]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 1 - Value
datatype = DOUBLE
tooltip = <html><body><p>Shows the output value of the logic unit. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/LOGICUNITS/1/VALUE</b></p></body></html>
get_cmd = TU/LOGICUNITS/1/VALUE

[Tu - Logicunits - 2 - Inputs - 0 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 2 - Inputs - 0 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/2/INPUTS/0/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/INPUTS/0/CHANNEL
get_cmd = TU/LOGICUNITS/2/INPUTS/0/CHANNEL

[Tu - Logicunits - 2 - Inputs - 0 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 2 - Inputs - 0 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/2/INPUTS/0/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/INPUTS/0/NOT
get_cmd = TU/LOGICUNITS/2/INPUTS/0/NOT

[Tu - Logicunits - 2 - Inputs - 1 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 2 - Inputs - 1 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/2/INPUTS/1/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/INPUTS/1/CHANNEL
get_cmd = TU/LOGICUNITS/2/INPUTS/1/CHANNEL

[Tu - Logicunits - 2 - Inputs - 1 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 2 - Inputs - 1 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/2/INPUTS/1/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/INPUTS/1/NOT
get_cmd = TU/LOGICUNITS/2/INPUTS/1/NOT

[Tu - Logicunits - 2 - Inputs - 2 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 2 - Inputs - 2 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/2/INPUTS/2/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/INPUTS/2/CHANNEL
get_cmd = TU/LOGICUNITS/2/INPUTS/2/CHANNEL

[Tu - Logicunits - 2 - Inputs - 2 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 2 - Inputs - 2 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/2/INPUTS/2/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/INPUTS/2/NOT
get_cmd = TU/LOGICUNITS/2/INPUTS/2/NOT

[Tu - Logicunits - 2 - Internalvalue]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 2 - Internalvalue
datatype = DOUBLE
tooltip = <html><body><p>Show the value after logical combination but before output settings. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/LOGICUNITS/2/INTERNALVALUE</b></p></body></html>
get_cmd = TU/LOGICUNITS/2/INTERNALVALUE

[Tu - Logicunits - 2 - Invert]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 2 - Invert
datatype = DOUBLE
tooltip = <html><body><p>Changes the output signal to low-active.</p><p><b>TU/LOGICUNITS/2/INVERT</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/INVERT
get_cmd = TU/LOGICUNITS/2/INVERT

[Tu - Logicunits - 2 - Keep]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 2 - Keep
datatype = DOUBLE
tooltip = <html><body><p>Hold the output state indefinitely once it has changed to the activated state.</p><p><b>TU/LOGICUNITS/2/KEEP</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/KEEP
get_cmd = TU/LOGICUNITS/2/KEEP

[Tu - Logicunits - 2 - Ops - 0 - Value]
section = TU
group = Tu - Logicunits - Ops
label = Tu - Logicunits - 2 - Ops - 0 - Value
datatype = COMBO
tooltip = <html><body><p>Logical operation applied to the signals to the left and right of the control.</p><p><ul><li>off: No logical operation selected. No additional signals will be used to generate the output.</li><li>and: Use a logical AND operation.</li><li>or: Use a logical OR operation.</li><li>xor: Use a logical XOR operation.</li></ul></p><p><b>TU/LOGICUNITS/2/OPS/0/VALUE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = and
cmd_def_3 = 2
combo_def_3 = or
cmd_def_4 = 3
combo_def_4 = xor
set_cmd = TU/LOGICUNITS/2/OPS/0/VALUE
get_cmd = TU/LOGICUNITS/2/OPS/0/VALUE

[Tu - Logicunits - 2 - Ops - 1 - Value]
section = TU
group = Tu - Logicunits - Ops
label = Tu - Logicunits - 2 - Ops - 1 - Value
datatype = COMBO
tooltip = <html><body><p>Logical operation applied to the signals to the left and right of the control.</p><p><ul><li>off: No logical operation selected. No additional signals will be used to generate the output.</li><li>and: Use a logical AND operation.</li><li>or: Use a logical OR operation.</li><li>xor: Use a logical XOR operation.</li></ul></p><p><b>TU/LOGICUNITS/2/OPS/1/VALUE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = and
cmd_def_3 = 2
combo_def_3 = or
cmd_def_4 = 3
combo_def_4 = xor
set_cmd = TU/LOGICUNITS/2/OPS/1/VALUE
get_cmd = TU/LOGICUNITS/2/OPS/1/VALUE

[Tu - Logicunits - 2 - Pulsewidth]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 2 - Pulsewidth
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum pulse width for the generated output signal. The width of pulses shorter than this time will be extended.</p><p><b>TU/LOGICUNITS/2/PULSEWIDTH</b></p></body></html>
set_cmd = TU/LOGICUNITS/2/PULSEWIDTH
get_cmd = TU/LOGICUNITS/2/PULSEWIDTH

[Tu - Logicunits - 2 - Value]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 2 - Value
datatype = DOUBLE
tooltip = <html><body><p>Shows the output value of the logic unit. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/LOGICUNITS/2/VALUE</b></p></body></html>
get_cmd = TU/LOGICUNITS/2/VALUE

[Tu - Logicunits - 3 - Inputs - 0 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 3 - Inputs - 0 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/3/INPUTS/0/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/INPUTS/0/CHANNEL
get_cmd = TU/LOGICUNITS/3/INPUTS/0/CHANNEL

[Tu - Logicunits - 3 - Inputs - 0 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 3 - Inputs - 0 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/3/INPUTS/0/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/INPUTS/0/NOT
get_cmd = TU/LOGICUNITS/3/INPUTS/0/NOT

[Tu - Logicunits - 3 - Inputs - 1 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 3 - Inputs - 1 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/3/INPUTS/1/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/INPUTS/1/CHANNEL
get_cmd = TU/LOGICUNITS/3/INPUTS/1/CHANNEL

[Tu - Logicunits - 3 - Inputs - 1 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 3 - Inputs - 1 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/3/INPUTS/1/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/INPUTS/1/NOT
get_cmd = TU/LOGICUNITS/3/INPUTS/1/NOT

[Tu - Logicunits - 3 - Inputs - 2 - Channel]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 3 - Inputs - 2 - Channel
datatype = DOUBLE
tooltip = <html><body><p>Selects threshold channel to be used as input.</p><p><b>TU/LOGICUNITS/3/INPUTS/2/CHANNEL</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/INPUTS/2/CHANNEL
get_cmd = TU/LOGICUNITS/3/INPUTS/2/CHANNEL

[Tu - Logicunits - 3 - Inputs - 2 - Not]
section = TU
group = Tu - Logicunits - Inputs
label = Tu - Logicunits - 3 - Inputs - 2 - Not
datatype = DOUBLE
tooltip = <html><body><p>Inverts the input signal.</p><p><b>TU/LOGICUNITS/3/INPUTS/2/NOT</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/INPUTS/2/NOT
get_cmd = TU/LOGICUNITS/3/INPUTS/2/NOT

[Tu - Logicunits - 3 - Internalvalue]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 3 - Internalvalue
datatype = DOUBLE
tooltip = <html><body><p>Show the value after logical combination but before output settings. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/LOGICUNITS/3/INTERNALVALUE</b></p></body></html>
get_cmd = TU/LOGICUNITS/3/INTERNALVALUE

[Tu - Logicunits - 3 - Invert]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 3 - Invert
datatype = DOUBLE
tooltip = <html><body><p>Changes the output signal to low-active.</p><p><b>TU/LOGICUNITS/3/INVERT</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/INVERT
get_cmd = TU/LOGICUNITS/3/INVERT

[Tu - Logicunits - 3 - Keep]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 3 - Keep
datatype = DOUBLE
tooltip = <html><body><p>Hold the output state indefinitely once it has changed to the activated state.</p><p><b>TU/LOGICUNITS/3/KEEP</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/KEEP
get_cmd = TU/LOGICUNITS/3/KEEP

[Tu - Logicunits - 3 - Ops - 0 - Value]
section = TU
group = Tu - Logicunits - Ops
label = Tu - Logicunits - 3 - Ops - 0 - Value
datatype = COMBO
tooltip = <html><body><p>Logical operation applied to the signals to the left and right of the control.</p><p><ul><li>off: No logical operation selected. No additional signals will be used to generate the output.</li><li>and: Use a logical AND operation.</li><li>or: Use a logical OR operation.</li><li>xor: Use a logical XOR operation.</li></ul></p><p><b>TU/LOGICUNITS/3/OPS/0/VALUE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = and
cmd_def_3 = 2
combo_def_3 = or
cmd_def_4 = 3
combo_def_4 = xor
set_cmd = TU/LOGICUNITS/3/OPS/0/VALUE
get_cmd = TU/LOGICUNITS/3/OPS/0/VALUE

[Tu - Logicunits - 3 - Ops - 1 - Value]
section = TU
group = Tu - Logicunits - Ops
label = Tu - Logicunits - 3 - Ops - 1 - Value
datatype = COMBO
tooltip = <html><body><p>Logical operation applied to the signals to the left and right of the control.</p><p><ul><li>off: No logical operation selected. No additional signals will be used to generate the output.</li><li>and: Use a logical AND operation.</li><li>or: Use a logical OR operation.</li><li>xor: Use a logical XOR operation.</li></ul></p><p><b>TU/LOGICUNITS/3/OPS/1/VALUE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = and
cmd_def_3 = 2
combo_def_3 = or
cmd_def_4 = 3
combo_def_4 = xor
set_cmd = TU/LOGICUNITS/3/OPS/1/VALUE
get_cmd = TU/LOGICUNITS/3/OPS/1/VALUE

[Tu - Logicunits - 3 - Pulsewidth]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 3 - Pulsewidth
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum pulse width for the generated output signal. The width of pulses shorter than this time will be extended.</p><p><b>TU/LOGICUNITS/3/PULSEWIDTH</b></p></body></html>
set_cmd = TU/LOGICUNITS/3/PULSEWIDTH
get_cmd = TU/LOGICUNITS/3/PULSEWIDTH

[Tu - Logicunits - 3 - Value]
section = TU
group = Tu - Logicunits
label = Tu - Logicunits - 3 - Value
datatype = DOUBLE
tooltip = <html><body><p>Shows the output value of the logic unit. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/LOGICUNITS/3/VALUE</b></p></body></html>
get_cmd = TU/LOGICUNITS/3/VALUE

[Tu - Thresholds - 0 - Activationtime]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 0 - Activationtime
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum duration of threshold violation needed before the output is activated. This can be used as a glitch filter.</p><p><b>TU/THRESHOLDS/0/ACTIVATIONTIME</b></p></body></html>
set_cmd = TU/THRESHOLDS/0/ACTIVATIONTIME
get_cmd = TU/THRESHOLDS/0/ACTIVATIONTIME

[Tu - Thresholds - 0 - Deactivationtime]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 0 - Deactivationtime
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum duration of threshold compliance needed before the output is deactivated.</p><p><b>TU/THRESHOLDS/0/DEACTIVATIONTIME</b></p></body></html>
set_cmd = TU/THRESHOLDS/0/DEACTIVATIONTIME
get_cmd = TU/THRESHOLDS/0/DEACTIVATIONTIME

[Tu - Thresholds - 0 - Filter - Abs]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 0 - Filter - Abs
datatype = DOUBLE
tooltip = <html><body><p>Takes the absolute value of an analog input signal.</p><p><b>TU/THRESHOLDS/0/FILTER/ABS</b></p></body></html>
set_cmd = TU/THRESHOLDS/0/FILTER/ABS
get_cmd = TU/THRESHOLDS/0/FILTER/ABS

[Tu - Thresholds - 0 - Filter - Enable]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 0 - Filter - Enable
datatype = BOOLEAN
tooltip = <html><body><p>Enables the low-pass filter applied to the analog input signal</p><p><b>TU/THRESHOLDS/0/FILTER/ENABLE</b></p></body></html>
get_cmd = TU/THRESHOLDS/0/FILTER/ENABLE

[Tu - Thresholds - 0 - Filter - Filteredvalue]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 0 - Filter - Filteredvalue
datatype = DOUBLE
tooltip = <html><body><p>Shows the value after the low-pass filter.</p><p><b>TU/THRESHOLDS/0/FILTER/FILTEREDVALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/0/FILTER/FILTEREDVALUE

[Tu - Thresholds - 0 - Filter - Mode]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 0 - Filter - Mode
datatype = COMBO
tooltip = <html><body><p>Selects the analysis mode defining the output signal.</p><p><ul><li>above_upper: Enable if the Signal is above Upper Threshold.</li><li>below_lower: Enable if the Signal is below Lower Threshold.</li><li>outside_range: Enable if the Signal is outside the range [Lower Threshold, Upper Threshold].</li><li>crossing_both_rising: Enable if the Signal crosses Upper Threshold from below Lower Threshold. The difference between Upper an Lower Threshold defines the threshold hysteresis.</li><li>crossing_both_falling: Enable if the Signal crosses Lower Threshold from above Upper Threshold. The difference between Upper an Lower Threshold defines the threshold hysteresis.</li></ul></p><p><b>TU/THRESHOLDS/0/FILTER/MODE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = above_upper
cmd_def_2 = 1
combo_def_2 = below_lower
cmd_def_3 = 2
combo_def_3 = outside_range
cmd_def_4 = 3
combo_def_4 = crossing_both_rising
cmd_def_5 = 4
combo_def_5 = crossing_both_falling
set_cmd = TU/THRESHOLDS/0/FILTER/MODE
get_cmd = TU/THRESHOLDS/0/FILTER/MODE

[Tu - Thresholds - 0 - Filter - Thresholdhigh]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 0 - Filter - Thresholdhigh
datatype = DOUBLE
tooltip = <html><body><p>Upper threshold used to generate the output. In Falling Edge mode, this parameter defines the hysteretic behavior as the output state is reset only when the signal crosses Upper Threshold from below.</p><p><b>TU/THRESHOLDS/0/FILTER/THRESHOLDHIGH</b></p></body></html>
set_cmd = TU/THRESHOLDS/0/FILTER/THRESHOLDHIGH
get_cmd = TU/THRESHOLDS/0/FILTER/THRESHOLDHIGH

[Tu - Thresholds - 0 - Filter - Thresholdlow]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 0 - Filter - Thresholdlow
datatype = DOUBLE
tooltip = <html><body><p>Lower threshold used to generate the output. In Rising Edge mode, this parameter defines the hysteretic behavior as the output state is reset only when the signal crosses Lower Threshold from above.</p><p><b>TU/THRESHOLDS/0/FILTER/THRESHOLDLOW</b></p></body></html>
set_cmd = TU/THRESHOLDS/0/FILTER/THRESHOLDLOW
get_cmd = TU/THRESHOLDS/0/FILTER/THRESHOLDLOW

[Tu - Thresholds - 0 - Filter - Timeconstant]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 0 - Filter - Timeconstant
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Defines the characteristic time constant (cut off) of the low-pass filter applied to the analog input signal.</p><p><b>TU/THRESHOLDS/0/FILTER/TIMECONSTANT</b></p></body></html>
set_cmd = TU/THRESHOLDS/0/FILTER/TIMECONSTANT
get_cmd = TU/THRESHOLDS/0/FILTER/TIMECONSTANT

[Tu - Thresholds - 0 - Input]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 0 - Input
datatype = COMBO
tooltip = <html><body><p>Select the signal source to be used in the threshold unit.</p><p><ul><li>demod_x: Demod X</li><li>demod_y: Demod Y</li><li>demod_r: Demod R</li><li>demod_theta: Demod Theta</li><li>pid_out: PID Out</li><li>boxcar: Boxcar</li><li>au_cartesian: AU Cartesian</li><li>au_polar: AU Polar</li><li>pid_shift: PID Shift</li><li>pid_error: PID Error</li><li>dio: DIO</li><li>trigin: Trigger In</li><li>trigout: Trigger Out</li><li>input_overload_v: Input Overload (V)</li><li>input_overload_i: Input Overload (I)</li><li>output_overload: Output Overload</li><li>auxin_overload: Aux input Overload</li><li>auxout_overload: Aux Output Overload</li><li>pid_output_overload: PID Output Overload</li><li>tu_output: TU Output Value</li></ul></p><p><b>TU/THRESHOLDS/0/INPUT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = demod_x
cmd_def_2 = 1
combo_def_2 = demod_y
cmd_def_3 = 2
combo_def_3 = demod_r
cmd_def_4 = 3
combo_def_4 = demod_theta
cmd_def_5 = 5
combo_def_5 = pid_out
cmd_def_6 = 6
combo_def_6 = boxcar
cmd_def_7 = 7
combo_def_7 = au_cartesian
cmd_def_8 = 8
combo_def_8 = au_polar
cmd_def_9 = 9
combo_def_9 = pid_shift
cmd_def_10 = 10
combo_def_10 = pid_error
cmd_def_11 = 50
combo_def_11 = dio
cmd_def_12 = 51
combo_def_12 = trigin
cmd_def_13 = 52
combo_def_13 = trigout
cmd_def_14 = 53
combo_def_14 = input_overload_v
cmd_def_15 = 54
combo_def_15 = input_overload_i
cmd_def_16 = 55
combo_def_16 = output_overload
cmd_def_17 = 56
combo_def_17 = auxin_overload
cmd_def_18 = 57
combo_def_18 = auxout_overload
cmd_def_19 = 58
combo_def_19 = pid_output_overload
cmd_def_20 = 59
combo_def_20 = tu_output
set_cmd = TU/THRESHOLDS/0/INPUT
get_cmd = TU/THRESHOLDS/0/INPUT

[Tu - Thresholds - 0 - Inputchannel]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 0 - Inputchannel
datatype = DOUBLE
tooltip = <html><body><p>Select the channel according to the selected signal source.</p><p><b>TU/THRESHOLDS/0/INPUTCHANNEL</b></p></body></html>
set_cmd = TU/THRESHOLDS/0/INPUTCHANNEL
get_cmd = TU/THRESHOLDS/0/INPUTCHANNEL

[Tu - Thresholds - 0 - Internalvalue]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 0 - Internalvalue
datatype = DOUBLE
tooltip = <html><body><p>Shows the value after threshold but before minimum time. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/THRESHOLDS/0/INTERNALVALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/0/INTERNALVALUE

[Tu - Thresholds - 0 - Value]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 0 - Value
datatype = DOUBLE
tooltip = <html><body><p>Shows the threshold value at the threshold output. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/THRESHOLDS/0/VALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/0/VALUE

[Tu - Thresholds - 1 - Activationtime]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 1 - Activationtime
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum duration of threshold violation needed before the output is activated. This can be used as a glitch filter.</p><p><b>TU/THRESHOLDS/1/ACTIVATIONTIME</b></p></body></html>
set_cmd = TU/THRESHOLDS/1/ACTIVATIONTIME
get_cmd = TU/THRESHOLDS/1/ACTIVATIONTIME

[Tu - Thresholds - 1 - Deactivationtime]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 1 - Deactivationtime
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum duration of threshold compliance needed before the output is deactivated.</p><p><b>TU/THRESHOLDS/1/DEACTIVATIONTIME</b></p></body></html>
set_cmd = TU/THRESHOLDS/1/DEACTIVATIONTIME
get_cmd = TU/THRESHOLDS/1/DEACTIVATIONTIME

[Tu - Thresholds - 1 - Filter - Abs]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 1 - Filter - Abs
datatype = DOUBLE
tooltip = <html><body><p>Takes the absolute value of an analog input signal.</p><p><b>TU/THRESHOLDS/1/FILTER/ABS</b></p></body></html>
set_cmd = TU/THRESHOLDS/1/FILTER/ABS
get_cmd = TU/THRESHOLDS/1/FILTER/ABS

[Tu - Thresholds - 1 - Filter - Enable]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 1 - Filter - Enable
datatype = BOOLEAN
tooltip = <html><body><p>Enables the low-pass filter applied to the analog input signal</p><p><b>TU/THRESHOLDS/1/FILTER/ENABLE</b></p></body></html>
get_cmd = TU/THRESHOLDS/1/FILTER/ENABLE

[Tu - Thresholds - 1 - Filter - Filteredvalue]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 1 - Filter - Filteredvalue
datatype = DOUBLE
tooltip = <html><body><p>Shows the value after the low-pass filter.</p><p><b>TU/THRESHOLDS/1/FILTER/FILTEREDVALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/1/FILTER/FILTEREDVALUE

[Tu - Thresholds - 1 - Filter - Mode]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 1 - Filter - Mode
datatype = COMBO
tooltip = <html><body><p>Selects the analysis mode defining the output signal.</p><p><ul><li>above_upper: Enable if the Signal is above Upper Threshold.</li><li>below_lower: Enable if the Signal is below Lower Threshold.</li><li>outside_range: Enable if the Signal is outside the range [Lower Threshold, Upper Threshold].</li><li>crossing_both_rising: Enable if the Signal crosses Upper Threshold from below Lower Threshold. The difference between Upper an Lower Threshold defines the threshold hysteresis.</li><li>crossing_both_falling: Enable if the Signal crosses Lower Threshold from above Upper Threshold. The difference between Upper an Lower Threshold defines the threshold hysteresis.</li></ul></p><p><b>TU/THRESHOLDS/1/FILTER/MODE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = above_upper
cmd_def_2 = 1
combo_def_2 = below_lower
cmd_def_3 = 2
combo_def_3 = outside_range
cmd_def_4 = 3
combo_def_4 = crossing_both_rising
cmd_def_5 = 4
combo_def_5 = crossing_both_falling
set_cmd = TU/THRESHOLDS/1/FILTER/MODE
get_cmd = TU/THRESHOLDS/1/FILTER/MODE

[Tu - Thresholds - 1 - Filter - Thresholdhigh]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 1 - Filter - Thresholdhigh
datatype = DOUBLE
tooltip = <html><body><p>Upper threshold used to generate the output. In Falling Edge mode, this parameter defines the hysteretic behavior as the output state is reset only when the signal crosses Upper Threshold from below.</p><p><b>TU/THRESHOLDS/1/FILTER/THRESHOLDHIGH</b></p></body></html>
set_cmd = TU/THRESHOLDS/1/FILTER/THRESHOLDHIGH
get_cmd = TU/THRESHOLDS/1/FILTER/THRESHOLDHIGH

[Tu - Thresholds - 1 - Filter - Thresholdlow]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 1 - Filter - Thresholdlow
datatype = DOUBLE
tooltip = <html><body><p>Lower threshold used to generate the output. In Rising Edge mode, this parameter defines the hysteretic behavior as the output state is reset only when the signal crosses Lower Threshold from above.</p><p><b>TU/THRESHOLDS/1/FILTER/THRESHOLDLOW</b></p></body></html>
set_cmd = TU/THRESHOLDS/1/FILTER/THRESHOLDLOW
get_cmd = TU/THRESHOLDS/1/FILTER/THRESHOLDLOW

[Tu - Thresholds - 1 - Filter - Timeconstant]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 1 - Filter - Timeconstant
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Defines the characteristic time constant (cut off) of the low-pass filter applied to the analog input signal.</p><p><b>TU/THRESHOLDS/1/FILTER/TIMECONSTANT</b></p></body></html>
set_cmd = TU/THRESHOLDS/1/FILTER/TIMECONSTANT
get_cmd = TU/THRESHOLDS/1/FILTER/TIMECONSTANT

[Tu - Thresholds - 1 - Input]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 1 - Input
datatype = COMBO
tooltip = <html><body><p>Select the signal source to be used in the threshold unit.</p><p><ul><li>demod_x: Demod X</li><li>demod_y: Demod Y</li><li>demod_r: Demod R</li><li>demod_theta: Demod Theta</li><li>pid_out: PID Out</li><li>boxcar: Boxcar</li><li>au_cartesian: AU Cartesian</li><li>au_polar: AU Polar</li><li>pid_shift: PID Shift</li><li>pid_error: PID Error</li><li>dio: DIO</li><li>trigin: Trigger In</li><li>trigout: Trigger Out</li><li>input_overload_v: Input Overload (V)</li><li>input_overload_i: Input Overload (I)</li><li>output_overload: Output Overload</li><li>auxin_overload: Aux input Overload</li><li>auxout_overload: Aux Output Overload</li><li>pid_output_overload: PID Output Overload</li><li>tu_output: TU Output Value</li></ul></p><p><b>TU/THRESHOLDS/1/INPUT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = demod_x
cmd_def_2 = 1
combo_def_2 = demod_y
cmd_def_3 = 2
combo_def_3 = demod_r
cmd_def_4 = 3
combo_def_4 = demod_theta
cmd_def_5 = 5
combo_def_5 = pid_out
cmd_def_6 = 6
combo_def_6 = boxcar
cmd_def_7 = 7
combo_def_7 = au_cartesian
cmd_def_8 = 8
combo_def_8 = au_polar
cmd_def_9 = 9
combo_def_9 = pid_shift
cmd_def_10 = 10
combo_def_10 = pid_error
cmd_def_11 = 50
combo_def_11 = dio
cmd_def_12 = 51
combo_def_12 = trigin
cmd_def_13 = 52
combo_def_13 = trigout
cmd_def_14 = 53
combo_def_14 = input_overload_v
cmd_def_15 = 54
combo_def_15 = input_overload_i
cmd_def_16 = 55
combo_def_16 = output_overload
cmd_def_17 = 56
combo_def_17 = auxin_overload
cmd_def_18 = 57
combo_def_18 = auxout_overload
cmd_def_19 = 58
combo_def_19 = pid_output_overload
cmd_def_20 = 59
combo_def_20 = tu_output
set_cmd = TU/THRESHOLDS/1/INPUT
get_cmd = TU/THRESHOLDS/1/INPUT

[Tu - Thresholds - 1 - Inputchannel]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 1 - Inputchannel
datatype = DOUBLE
tooltip = <html><body><p>Select the channel according to the selected signal source.</p><p><b>TU/THRESHOLDS/1/INPUTCHANNEL</b></p></body></html>
set_cmd = TU/THRESHOLDS/1/INPUTCHANNEL
get_cmd = TU/THRESHOLDS/1/INPUTCHANNEL

[Tu - Thresholds - 1 - Internalvalue]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 1 - Internalvalue
datatype = DOUBLE
tooltip = <html><body><p>Shows the value after threshold but before minimum time. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/THRESHOLDS/1/INTERNALVALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/1/INTERNALVALUE

[Tu - Thresholds - 1 - Value]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 1 - Value
datatype = DOUBLE
tooltip = <html><body><p>Shows the threshold value at the threshold output. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/THRESHOLDS/1/VALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/1/VALUE

[Tu - Thresholds - 2 - Activationtime]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 2 - Activationtime
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum duration of threshold violation needed before the output is activated. This can be used as a glitch filter.</p><p><b>TU/THRESHOLDS/2/ACTIVATIONTIME</b></p></body></html>
set_cmd = TU/THRESHOLDS/2/ACTIVATIONTIME
get_cmd = TU/THRESHOLDS/2/ACTIVATIONTIME

[Tu - Thresholds - 2 - Deactivationtime]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 2 - Deactivationtime
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum duration of threshold compliance needed before the output is deactivated.</p><p><b>TU/THRESHOLDS/2/DEACTIVATIONTIME</b></p></body></html>
set_cmd = TU/THRESHOLDS/2/DEACTIVATIONTIME
get_cmd = TU/THRESHOLDS/2/DEACTIVATIONTIME

[Tu - Thresholds - 2 - Filter - Abs]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 2 - Filter - Abs
datatype = DOUBLE
tooltip = <html><body><p>Takes the absolute value of an analog input signal.</p><p><b>TU/THRESHOLDS/2/FILTER/ABS</b></p></body></html>
set_cmd = TU/THRESHOLDS/2/FILTER/ABS
get_cmd = TU/THRESHOLDS/2/FILTER/ABS

[Tu - Thresholds - 2 - Filter - Enable]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 2 - Filter - Enable
datatype = BOOLEAN
tooltip = <html><body><p>Enables the low-pass filter applied to the analog input signal</p><p><b>TU/THRESHOLDS/2/FILTER/ENABLE</b></p></body></html>
get_cmd = TU/THRESHOLDS/2/FILTER/ENABLE

[Tu - Thresholds - 2 - Filter - Filteredvalue]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 2 - Filter - Filteredvalue
datatype = DOUBLE
tooltip = <html><body><p>Shows the value after the low-pass filter.</p><p><b>TU/THRESHOLDS/2/FILTER/FILTEREDVALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/2/FILTER/FILTEREDVALUE

[Tu - Thresholds - 2 - Filter - Mode]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 2 - Filter - Mode
datatype = COMBO
tooltip = <html><body><p>Selects the analysis mode defining the output signal.</p><p><ul><li>above_upper: Enable if the Signal is above Upper Threshold.</li><li>below_lower: Enable if the Signal is below Lower Threshold.</li><li>outside_range: Enable if the Signal is outside the range [Lower Threshold, Upper Threshold].</li><li>crossing_both_rising: Enable if the Signal crosses Upper Threshold from below Lower Threshold. The difference between Upper an Lower Threshold defines the threshold hysteresis.</li><li>crossing_both_falling: Enable if the Signal crosses Lower Threshold from above Upper Threshold. The difference between Upper an Lower Threshold defines the threshold hysteresis.</li></ul></p><p><b>TU/THRESHOLDS/2/FILTER/MODE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = above_upper
cmd_def_2 = 1
combo_def_2 = below_lower
cmd_def_3 = 2
combo_def_3 = outside_range
cmd_def_4 = 3
combo_def_4 = crossing_both_rising
cmd_def_5 = 4
combo_def_5 = crossing_both_falling
set_cmd = TU/THRESHOLDS/2/FILTER/MODE
get_cmd = TU/THRESHOLDS/2/FILTER/MODE

[Tu - Thresholds - 2 - Filter - Thresholdhigh]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 2 - Filter - Thresholdhigh
datatype = DOUBLE
tooltip = <html><body><p>Upper threshold used to generate the output. In Falling Edge mode, this parameter defines the hysteretic behavior as the output state is reset only when the signal crosses Upper Threshold from below.</p><p><b>TU/THRESHOLDS/2/FILTER/THRESHOLDHIGH</b></p></body></html>
set_cmd = TU/THRESHOLDS/2/FILTER/THRESHOLDHIGH
get_cmd = TU/THRESHOLDS/2/FILTER/THRESHOLDHIGH

[Tu - Thresholds - 2 - Filter - Thresholdlow]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 2 - Filter - Thresholdlow
datatype = DOUBLE
tooltip = <html><body><p>Lower threshold used to generate the output. In Rising Edge mode, this parameter defines the hysteretic behavior as the output state is reset only when the signal crosses Lower Threshold from above.</p><p><b>TU/THRESHOLDS/2/FILTER/THRESHOLDLOW</b></p></body></html>
set_cmd = TU/THRESHOLDS/2/FILTER/THRESHOLDLOW
get_cmd = TU/THRESHOLDS/2/FILTER/THRESHOLDLOW

[Tu - Thresholds - 2 - Filter - Timeconstant]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 2 - Filter - Timeconstant
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Defines the characteristic time constant (cut off) of the low-pass filter applied to the analog input signal.</p><p><b>TU/THRESHOLDS/2/FILTER/TIMECONSTANT</b></p></body></html>
set_cmd = TU/THRESHOLDS/2/FILTER/TIMECONSTANT
get_cmd = TU/THRESHOLDS/2/FILTER/TIMECONSTANT

[Tu - Thresholds - 2 - Input]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 2 - Input
datatype = COMBO
tooltip = <html><body><p>Select the signal source to be used in the threshold unit.</p><p><ul><li>demod_x: Demod X</li><li>demod_y: Demod Y</li><li>demod_r: Demod R</li><li>demod_theta: Demod Theta</li><li>pid_out: PID Out</li><li>boxcar: Boxcar</li><li>au_cartesian: AU Cartesian</li><li>au_polar: AU Polar</li><li>pid_shift: PID Shift</li><li>pid_error: PID Error</li><li>dio: DIO</li><li>trigin: Trigger In</li><li>trigout: Trigger Out</li><li>input_overload_v: Input Overload (V)</li><li>input_overload_i: Input Overload (I)</li><li>output_overload: Output Overload</li><li>auxin_overload: Aux input Overload</li><li>auxout_overload: Aux Output Overload</li><li>pid_output_overload: PID Output Overload</li><li>tu_output: TU Output Value</li></ul></p><p><b>TU/THRESHOLDS/2/INPUT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = demod_x
cmd_def_2 = 1
combo_def_2 = demod_y
cmd_def_3 = 2
combo_def_3 = demod_r
cmd_def_4 = 3
combo_def_4 = demod_theta
cmd_def_5 = 5
combo_def_5 = pid_out
cmd_def_6 = 6
combo_def_6 = boxcar
cmd_def_7 = 7
combo_def_7 = au_cartesian
cmd_def_8 = 8
combo_def_8 = au_polar
cmd_def_9 = 9
combo_def_9 = pid_shift
cmd_def_10 = 10
combo_def_10 = pid_error
cmd_def_11 = 50
combo_def_11 = dio
cmd_def_12 = 51
combo_def_12 = trigin
cmd_def_13 = 52
combo_def_13 = trigout
cmd_def_14 = 53
combo_def_14 = input_overload_v
cmd_def_15 = 54
combo_def_15 = input_overload_i
cmd_def_16 = 55
combo_def_16 = output_overload
cmd_def_17 = 56
combo_def_17 = auxin_overload
cmd_def_18 = 57
combo_def_18 = auxout_overload
cmd_def_19 = 58
combo_def_19 = pid_output_overload
cmd_def_20 = 59
combo_def_20 = tu_output
set_cmd = TU/THRESHOLDS/2/INPUT
get_cmd = TU/THRESHOLDS/2/INPUT

[Tu - Thresholds - 2 - Inputchannel]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 2 - Inputchannel
datatype = DOUBLE
tooltip = <html><body><p>Select the channel according to the selected signal source.</p><p><b>TU/THRESHOLDS/2/INPUTCHANNEL</b></p></body></html>
set_cmd = TU/THRESHOLDS/2/INPUTCHANNEL
get_cmd = TU/THRESHOLDS/2/INPUTCHANNEL

[Tu - Thresholds - 2 - Internalvalue]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 2 - Internalvalue
datatype = DOUBLE
tooltip = <html><body><p>Shows the value after threshold but before minimum time. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/THRESHOLDS/2/INTERNALVALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/2/INTERNALVALUE

[Tu - Thresholds - 2 - Value]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 2 - Value
datatype = DOUBLE
tooltip = <html><body><p>Shows the threshold value at the threshold output. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/THRESHOLDS/2/VALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/2/VALUE

[Tu - Thresholds - 3 - Activationtime]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 3 - Activationtime
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum duration of threshold violation needed before the output is activated. This can be used as a glitch filter.</p><p><b>TU/THRESHOLDS/3/ACTIVATIONTIME</b></p></body></html>
set_cmd = TU/THRESHOLDS/3/ACTIVATIONTIME
get_cmd = TU/THRESHOLDS/3/ACTIVATIONTIME

[Tu - Thresholds - 3 - Deactivationtime]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 3 - Deactivationtime
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Minimum duration of threshold compliance needed before the output is deactivated.</p><p><b>TU/THRESHOLDS/3/DEACTIVATIONTIME</b></p></body></html>
set_cmd = TU/THRESHOLDS/3/DEACTIVATIONTIME
get_cmd = TU/THRESHOLDS/3/DEACTIVATIONTIME

[Tu - Thresholds - 3 - Filter - Abs]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 3 - Filter - Abs
datatype = DOUBLE
tooltip = <html><body><p>Takes the absolute value of an analog input signal.</p><p><b>TU/THRESHOLDS/3/FILTER/ABS</b></p></body></html>
set_cmd = TU/THRESHOLDS/3/FILTER/ABS
get_cmd = TU/THRESHOLDS/3/FILTER/ABS

[Tu - Thresholds - 3 - Filter - Enable]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 3 - Filter - Enable
datatype = BOOLEAN
tooltip = <html><body><p>Enables the low-pass filter applied to the analog input signal</p><p><b>TU/THRESHOLDS/3/FILTER/ENABLE</b></p></body></html>
get_cmd = TU/THRESHOLDS/3/FILTER/ENABLE

[Tu - Thresholds - 3 - Filter - Filteredvalue]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 3 - Filter - Filteredvalue
datatype = DOUBLE
tooltip = <html><body><p>Shows the value after the low-pass filter.</p><p><b>TU/THRESHOLDS/3/FILTER/FILTEREDVALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/3/FILTER/FILTEREDVALUE

[Tu - Thresholds - 3 - Filter - Mode]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 3 - Filter - Mode
datatype = COMBO
tooltip = <html><body><p>Selects the analysis mode defining the output signal.</p><p><ul><li>above_upper: Enable if the Signal is above Upper Threshold.</li><li>below_lower: Enable if the Signal is below Lower Threshold.</li><li>outside_range: Enable if the Signal is outside the range [Lower Threshold, Upper Threshold].</li><li>crossing_both_rising: Enable if the Signal crosses Upper Threshold from below Lower Threshold. The difference between Upper an Lower Threshold defines the threshold hysteresis.</li><li>crossing_both_falling: Enable if the Signal crosses Lower Threshold from above Upper Threshold. The difference between Upper an Lower Threshold defines the threshold hysteresis.</li></ul></p><p><b>TU/THRESHOLDS/3/FILTER/MODE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = above_upper
cmd_def_2 = 1
combo_def_2 = below_lower
cmd_def_3 = 2
combo_def_3 = outside_range
cmd_def_4 = 3
combo_def_4 = crossing_both_rising
cmd_def_5 = 4
combo_def_5 = crossing_both_falling
set_cmd = TU/THRESHOLDS/3/FILTER/MODE
get_cmd = TU/THRESHOLDS/3/FILTER/MODE

[Tu - Thresholds - 3 - Filter - Thresholdhigh]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 3 - Filter - Thresholdhigh
datatype = DOUBLE
tooltip = <html><body><p>Upper threshold used to generate the output. In Falling Edge mode, this parameter defines the hysteretic behavior as the output state is reset only when the signal crosses Upper Threshold from below.</p><p><b>TU/THRESHOLDS/3/FILTER/THRESHOLDHIGH</b></p></body></html>
set_cmd = TU/THRESHOLDS/3/FILTER/THRESHOLDHIGH
get_cmd = TU/THRESHOLDS/3/FILTER/THRESHOLDHIGH

[Tu - Thresholds - 3 - Filter - Thresholdlow]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 3 - Filter - Thresholdlow
datatype = DOUBLE
tooltip = <html><body><p>Lower threshold used to generate the output. In Rising Edge mode, this parameter defines the hysteretic behavior as the output state is reset only when the signal crosses Lower Threshold from above.</p><p><b>TU/THRESHOLDS/3/FILTER/THRESHOLDLOW</b></p></body></html>
set_cmd = TU/THRESHOLDS/3/FILTER/THRESHOLDLOW
get_cmd = TU/THRESHOLDS/3/FILTER/THRESHOLDLOW

[Tu - Thresholds - 3 - Filter - Timeconstant]
section = TU
group = Tu - Thresholds - Filter
label = Tu - Thresholds - 3 - Filter - Timeconstant
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Defines the characteristic time constant (cut off) of the low-pass filter applied to the analog input signal.</p><p><b>TU/THRESHOLDS/3/FILTER/TIMECONSTANT</b></p></body></html>
set_cmd = TU/THRESHOLDS/3/FILTER/TIMECONSTANT
get_cmd = TU/THRESHOLDS/3/FILTER/TIMECONSTANT

[Tu - Thresholds - 3 - Input]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 3 - Input
datatype = COMBO
tooltip = <html><body><p>Select the signal source to be used in the threshold unit.</p><p><ul><li>demod_x: Demod X</li><li>demod_y: Demod Y</li><li>demod_r: Demod R</li><li>demod_theta: Demod Theta</li><li>pid_out: PID Out</li><li>boxcar: Boxcar</li><li>au_cartesian: AU Cartesian</li><li>au_polar: AU Polar</li><li>pid_shift: PID Shift</li><li>pid_error: PID Error</li><li>dio: DIO</li><li>trigin: Trigger In</li><li>trigout: Trigger Out</li><li>input_overload_v: Input Overload (V)</li><li>input_overload_i: Input Overload (I)</li><li>output_overload: Output Overload</li><li>auxin_overload: Aux input Overload</li><li>auxout_overload: Aux Output Overload</li><li>pid_output_overload: PID Output Overload</li><li>tu_output: TU Output Value</li></ul></p><p><b>TU/THRESHOLDS/3/INPUT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = demod_x
cmd_def_2 = 1
combo_def_2 = demod_y
cmd_def_3 = 2
combo_def_3 = demod_r
cmd_def_4 = 3
combo_def_4 = demod_theta
cmd_def_5 = 5
combo_def_5 = pid_out
cmd_def_6 = 6
combo_def_6 = boxcar
cmd_def_7 = 7
combo_def_7 = au_cartesian
cmd_def_8 = 8
combo_def_8 = au_polar
cmd_def_9 = 9
combo_def_9 = pid_shift
cmd_def_10 = 10
combo_def_10 = pid_error
cmd_def_11 = 50
combo_def_11 = dio
cmd_def_12 = 51
combo_def_12 = trigin
cmd_def_13 = 52
combo_def_13 = trigout
cmd_def_14 = 53
combo_def_14 = input_overload_v
cmd_def_15 = 54
combo_def_15 = input_overload_i
cmd_def_16 = 55
combo_def_16 = output_overload
cmd_def_17 = 56
combo_def_17 = auxin_overload
cmd_def_18 = 57
combo_def_18 = auxout_overload
cmd_def_19 = 58
combo_def_19 = pid_output_overload
cmd_def_20 = 59
combo_def_20 = tu_output
set_cmd = TU/THRESHOLDS/3/INPUT
get_cmd = TU/THRESHOLDS/3/INPUT

[Tu - Thresholds - 3 - Inputchannel]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 3 - Inputchannel
datatype = DOUBLE
tooltip = <html><body><p>Select the channel according to the selected signal source.</p><p><b>TU/THRESHOLDS/3/INPUTCHANNEL</b></p></body></html>
set_cmd = TU/THRESHOLDS/3/INPUTCHANNEL
get_cmd = TU/THRESHOLDS/3/INPUTCHANNEL

[Tu - Thresholds - 3 - Internalvalue]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 3 - Internalvalue
datatype = DOUBLE
tooltip = <html><body><p>Shows the value after threshold but before minimum time. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/THRESHOLDS/3/INTERNALVALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/3/INTERNALVALUE

[Tu - Thresholds - 3 - Value]
section = TU
group = Tu - Thresholds
label = Tu - Thresholds - 3 - Value
datatype = DOUBLE
tooltip = <html><body><p>Shows the threshold value at the threshold output. The value integrated over some time. Values are 1: low, 2: high, 3: was low and high in the period.</p><p><b>TU/THRESHOLDS/3/VALUE</b></p></body></html>
get_cmd = TU/THRESHOLDS/3/VALUE

[Auxins - 0 - Averaging]
section = Aux
group = Auxins
label = Auxins - 0 - Averaging
datatype = DOUBLE
tooltip = <html><body><p>Defines the number of samples on the input to average as a power of two. Possible values are in the range [0, 16]. A value of 0 corresponds to the sampling rate of the auxiliary input`s ADC.</p><p><b>AUXINS/0/AVERAGING</b></p></body></html>
set_cmd = AUXINS/0/AVERAGING
get_cmd = AUXINS/0/AVERAGING

[Auxins - 0 - Values - 0]
section = Aux
group = Auxins - Values
label = Auxins - 0 - Values - 0
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Voltage measured at the Auxiliary Input after averaging. The value of this node is updated at a low rate (50 Hz): the streaming node auxins/n/sample is updated at a high rate defined by the averaging.</p><p><b>AUXINS/0/VALUES/0</b></p></body></html>
get_cmd = AUXINS/0/VALUES/0

[Auxins - 0 - Values - 1]
section = Aux
group = Auxins - Values
label = Auxins - 0 - Values - 1
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Voltage measured at the Auxiliary Input after averaging. The value of this node is updated at a low rate (50 Hz): the streaming node auxins/n/sample is updated at a high rate defined by the averaging.</p><p><b>AUXINS/0/VALUES/1</b></p></body></html>
get_cmd = AUXINS/0/VALUES/1

[Auxouts - 0 - Demodselect]
section = Aux
group = Auxouts
label = Auxouts - 0 - Demodselect
datatype = DOUBLE
tooltip = <html><body><p>Select the channel number of the selected signal source.</p><p><b>AUXOUTS/0/DEMODSELECT</b></p></body></html>
set_cmd = AUXOUTS/0/DEMODSELECT
get_cmd = AUXOUTS/0/DEMODSELECT

[Auxouts - 0 - Limitlower]
section = Aux
group = Auxouts
label = Auxouts - 0 - Limitlower
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Lower limit for the signal at the Auxiliary Output. A smaller value will be clipped.</p><p><b>AUXOUTS/0/LIMITLOWER</b></p></body></html>
set_cmd = AUXOUTS/0/LIMITLOWER
get_cmd = AUXOUTS/0/LIMITLOWER

[Auxouts - 0 - Limitupper]
section = Aux
group = Auxouts
label = Auxouts - 0 - Limitupper
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Upper limit for the signal at the Auxiliary Output. A larger value will be clipped.</p><p><b>AUXOUTS/0/LIMITUPPER</b></p></body></html>
set_cmd = AUXOUTS/0/LIMITUPPER
get_cmd = AUXOUTS/0/LIMITUPPER

[Auxouts - 0 - Offset]
section = Aux
group = Auxouts
label = Auxouts - 0 - Offset
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Add the specified offset voltage to the signal after scaling. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/0/OFFSET</b></p></body></html>
set_cmd = AUXOUTS/0/OFFSET
get_cmd = AUXOUTS/0/OFFSET

[Auxouts - 0 - Outputselect]
section = Aux
group = Auxouts
label = Auxouts - 0 - Outputselect
datatype = COMBO
tooltip = <html><body><p>Select the signal source to be represented on the Auxiliary Output.</p><p><ul><li>manual: Select Manual as the output option.</li><li>demod_x: Select Demod X as the output option.</li><li>demod_y: Select Demod Y as the output option.</li><li>demod_r: Select Demod R as the output option.</li><li>demod_theta: Select Demod Theta as the output option.</li><li>pid: Select PID Out as the output option.</li><li>pid_shift: Select PID Shift as the output option.</li><li>pid_error: Select PID Error as the output option.</li><li>tu_filtered: Select TU Filtered Value as the output option.</li><li>tu_output: Select TU Output Value as the output option.</li></ul></p><p><b>AUXOUTS/0/OUTPUTSELECT</b></p></body></html>
cmd_def_1 = -1
combo_def_1 = manual
cmd_def_2 = 0
combo_def_2 = demod_x
cmd_def_3 = 1
combo_def_3 = demod_y
cmd_def_4 = 2
combo_def_4 = demod_r
cmd_def_5 = 3
combo_def_5 = demod_theta
cmd_def_6 = 5
combo_def_6 = pid
cmd_def_7 = 9
combo_def_7 = pid_shift
cmd_def_8 = 10
combo_def_8 = pid_error
cmd_def_9 = 11
combo_def_9 = tu_filtered
cmd_def_10 = 13
combo_def_10 = tu_output
set_cmd = AUXOUTS/0/OUTPUTSELECT
get_cmd = AUXOUTS/0/OUTPUTSELECT

[Auxouts - 0 - Preoffset]
section = Aux
group = Auxouts
label = Auxouts - 0 - Preoffset
datatype = DOUBLE
tooltip = <html><body><p>Add a pre-offset to the signal before scaling is applied. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/0/PREOFFSET</b></p></body></html>
set_cmd = AUXOUTS/0/PREOFFSET
get_cmd = AUXOUTS/0/PREOFFSET

[Auxouts - 0 - Scale]
section = Aux
group = Auxouts
label = Auxouts - 0 - Scale
datatype = DOUBLE
tooltip = <html><body><p>Multiplication factor to scale the signal. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/0/SCALE</b></p></body></html>
set_cmd = AUXOUTS/0/SCALE
get_cmd = AUXOUTS/0/SCALE

[Auxouts - 0 - Value]
section = Aux
group = Auxouts
label = Auxouts - 0 - Value
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Voltage present on the Auxiliary Output. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/0/VALUE</b></p></body></html>
get_cmd = AUXOUTS/0/VALUE

[Auxouts - 1 - Demodselect]
section = Aux
group = Auxouts
label = Auxouts - 1 - Demodselect
datatype = DOUBLE
tooltip = <html><body><p>Select the channel number of the selected signal source.</p><p><b>AUXOUTS/1/DEMODSELECT</b></p></body></html>
set_cmd = AUXOUTS/1/DEMODSELECT
get_cmd = AUXOUTS/1/DEMODSELECT

[Auxouts - 1 - Limitlower]
section = Aux
group = Auxouts
label = Auxouts - 1 - Limitlower
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Lower limit for the signal at the Auxiliary Output. A smaller value will be clipped.</p><p><b>AUXOUTS/1/LIMITLOWER</b></p></body></html>
set_cmd = AUXOUTS/1/LIMITLOWER
get_cmd = AUXOUTS/1/LIMITLOWER

[Auxouts - 1 - Limitupper]
section = Aux
group = Auxouts
label = Auxouts - 1 - Limitupper
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Upper limit for the signal at the Auxiliary Output. A larger value will be clipped.</p><p><b>AUXOUTS/1/LIMITUPPER</b></p></body></html>
set_cmd = AUXOUTS/1/LIMITUPPER
get_cmd = AUXOUTS/1/LIMITUPPER

[Auxouts - 1 - Offset]
section = Aux
group = Auxouts
label = Auxouts - 1 - Offset
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Add the specified offset voltage to the signal after scaling. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/1/OFFSET</b></p></body></html>
set_cmd = AUXOUTS/1/OFFSET
get_cmd = AUXOUTS/1/OFFSET

[Auxouts - 1 - Outputselect]
section = Aux
group = Auxouts
label = Auxouts - 1 - Outputselect
datatype = COMBO
tooltip = <html><body><p>Select the signal source to be represented on the Auxiliary Output.</p><p><ul><li>manual: Select Manual as the output option.</li><li>demod_x: Select Demod X as the output option.</li><li>demod_y: Select Demod Y as the output option.</li><li>demod_r: Select Demod R as the output option.</li><li>demod_theta: Select Demod Theta as the output option.</li><li>pid: Select PID Out as the output option.</li><li>pid_shift: Select PID Shift as the output option.</li><li>pid_error: Select PID Error as the output option.</li><li>tu_filtered: Select TU Filtered Value as the output option.</li><li>tu_output: Select TU Output Value as the output option.</li></ul></p><p><b>AUXOUTS/1/OUTPUTSELECT</b></p></body></html>
cmd_def_1 = -1
combo_def_1 = manual
cmd_def_2 = 0
combo_def_2 = demod_x
cmd_def_3 = 1
combo_def_3 = demod_y
cmd_def_4 = 2
combo_def_4 = demod_r
cmd_def_5 = 3
combo_def_5 = demod_theta
cmd_def_6 = 5
combo_def_6 = pid
cmd_def_7 = 9
combo_def_7 = pid_shift
cmd_def_8 = 10
combo_def_8 = pid_error
cmd_def_9 = 11
combo_def_9 = tu_filtered
cmd_def_10 = 13
combo_def_10 = tu_output
set_cmd = AUXOUTS/1/OUTPUTSELECT
get_cmd = AUXOUTS/1/OUTPUTSELECT

[Auxouts - 1 - Preoffset]
section = Aux
group = Auxouts
label = Auxouts - 1 - Preoffset
datatype = DOUBLE
tooltip = <html><body><p>Add a pre-offset to the signal before scaling is applied. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/1/PREOFFSET</b></p></body></html>
set_cmd = AUXOUTS/1/PREOFFSET
get_cmd = AUXOUTS/1/PREOFFSET

[Auxouts - 1 - Scale]
section = Aux
group = Auxouts
label = Auxouts - 1 - Scale
datatype = DOUBLE
tooltip = <html><body><p>Multiplication factor to scale the signal. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/1/SCALE</b></p></body></html>
set_cmd = AUXOUTS/1/SCALE
get_cmd = AUXOUTS/1/SCALE

[Auxouts - 1 - Value]
section = Aux
group = Auxouts
label = Auxouts - 1 - Value
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Voltage present on the Auxiliary Output. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/1/VALUE</b></p></body></html>
get_cmd = AUXOUTS/1/VALUE

[Auxouts - 2 - Demodselect]
section = Aux
group = Auxouts
label = Auxouts - 2 - Demodselect
datatype = DOUBLE
tooltip = <html><body><p>Select the channel number of the selected signal source.</p><p><b>AUXOUTS/2/DEMODSELECT</b></p></body></html>
set_cmd = AUXOUTS/2/DEMODSELECT
get_cmd = AUXOUTS/2/DEMODSELECT

[Auxouts - 2 - Limitlower]
section = Aux
group = Auxouts
label = Auxouts - 2 - Limitlower
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Lower limit for the signal at the Auxiliary Output. A smaller value will be clipped.</p><p><b>AUXOUTS/2/LIMITLOWER</b></p></body></html>
set_cmd = AUXOUTS/2/LIMITLOWER
get_cmd = AUXOUTS/2/LIMITLOWER

[Auxouts - 2 - Limitupper]
section = Aux
group = Auxouts
label = Auxouts - 2 - Limitupper
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Upper limit for the signal at the Auxiliary Output. A larger value will be clipped.</p><p><b>AUXOUTS/2/LIMITUPPER</b></p></body></html>
set_cmd = AUXOUTS/2/LIMITUPPER
get_cmd = AUXOUTS/2/LIMITUPPER

[Auxouts - 2 - Offset]
section = Aux
group = Auxouts
label = Auxouts - 2 - Offset
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Add the specified offset voltage to the signal after scaling. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/2/OFFSET</b></p></body></html>
set_cmd = AUXOUTS/2/OFFSET
get_cmd = AUXOUTS/2/OFFSET

[Auxouts - 2 - Outputselect]
section = Aux
group = Auxouts
label = Auxouts - 2 - Outputselect
datatype = COMBO
tooltip = <html><body><p>Select the signal source to be represented on the Auxiliary Output.</p><p><ul><li>manual: Select Manual as the output option.</li><li>demod_x: Select Demod X as the output option.</li><li>demod_y: Select Demod Y as the output option.</li><li>demod_r: Select Demod R as the output option.</li><li>demod_theta: Select Demod Theta as the output option.</li><li>pid: Select PID Out as the output option.</li><li>pid_shift: Select PID Shift as the output option.</li><li>pid_error: Select PID Error as the output option.</li><li>tu_filtered: Select TU Filtered Value as the output option.</li><li>tu_output: Select TU Output Value as the output option.</li></ul></p><p><b>AUXOUTS/2/OUTPUTSELECT</b></p></body></html>
cmd_def_1 = -1
combo_def_1 = manual
cmd_def_2 = 0
combo_def_2 = demod_x
cmd_def_3 = 1
combo_def_3 = demod_y
cmd_def_4 = 2
combo_def_4 = demod_r
cmd_def_5 = 3
combo_def_5 = demod_theta
cmd_def_6 = 5
combo_def_6 = pid
cmd_def_7 = 9
combo_def_7 = pid_shift
cmd_def_8 = 10
combo_def_8 = pid_error
cmd_def_9 = 11
combo_def_9 = tu_filtered
cmd_def_10 = 13
combo_def_10 = tu_output
set_cmd = AUXOUTS/2/OUTPUTSELECT
get_cmd = AUXOUTS/2/OUTPUTSELECT

[Auxouts - 2 - Preoffset]
section = Aux
group = Auxouts
label = Auxouts - 2 - Preoffset
datatype = DOUBLE
tooltip = <html><body><p>Add a pre-offset to the signal before scaling is applied. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/2/PREOFFSET</b></p></body></html>
set_cmd = AUXOUTS/2/PREOFFSET
get_cmd = AUXOUTS/2/PREOFFSET

[Auxouts - 2 - Scale]
section = Aux
group = Auxouts
label = Auxouts - 2 - Scale
datatype = DOUBLE
tooltip = <html><body><p>Multiplication factor to scale the signal. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/2/SCALE</b></p></body></html>
set_cmd = AUXOUTS/2/SCALE
get_cmd = AUXOUTS/2/SCALE

[Auxouts - 2 - Value]
section = Aux
group = Auxouts
label = Auxouts - 2 - Value
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Voltage present on the Auxiliary Output. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/2/VALUE</b></p></body></html>
get_cmd = AUXOUTS/2/VALUE

[Auxouts - 3 - Demodselect]
section = Aux
group = Auxouts
label = Auxouts - 3 - Demodselect
datatype = DOUBLE
tooltip = <html><body><p>Select the channel number of the selected signal source.</p><p><b>AUXOUTS/3/DEMODSELECT</b></p></body></html>
set_cmd = AUXOUTS/3/DEMODSELECT
get_cmd = AUXOUTS/3/DEMODSELECT

[Auxouts - 3 - Limitlower]
section = Aux
group = Auxouts
label = Auxouts - 3 - Limitlower
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Lower limit for the signal at the Auxiliary Output. A smaller value will be clipped.</p><p><b>AUXOUTS/3/LIMITLOWER</b></p></body></html>
set_cmd = AUXOUTS/3/LIMITLOWER
get_cmd = AUXOUTS/3/LIMITLOWER

[Auxouts - 3 - Limitupper]
section = Aux
group = Auxouts
label = Auxouts - 3 - Limitupper
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Upper limit for the signal at the Auxiliary Output. A larger value will be clipped.</p><p><b>AUXOUTS/3/LIMITUPPER</b></p></body></html>
set_cmd = AUXOUTS/3/LIMITUPPER
get_cmd = AUXOUTS/3/LIMITUPPER

[Auxouts - 3 - Offset]
section = Aux
group = Auxouts
label = Auxouts - 3 - Offset
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Add the specified offset voltage to the signal after scaling. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/3/OFFSET</b></p></body></html>
set_cmd = AUXOUTS/3/OFFSET
get_cmd = AUXOUTS/3/OFFSET

[Auxouts - 3 - Outputselect]
section = Aux
group = Auxouts
label = Auxouts - 3 - Outputselect
datatype = COMBO
tooltip = <html><body><p>Select the signal source to be represented on the Auxiliary Output.</p><p><ul><li>manual: Select Manual as the output option.</li><li>demod_x: Select Demod X as the output option.</li><li>demod_y: Select Demod Y as the output option.</li><li>demod_r: Select Demod R as the output option.</li><li>demod_theta: Select Demod Theta as the output option.</li><li>pid: Select PID Out as the output option.</li><li>pid_shift: Select PID Shift as the output option.</li><li>pid_error: Select PID Error as the output option.</li><li>tu_filtered: Select TU Filtered Value as the output option.</li><li>tu_output: Select TU Output Value as the output option.</li></ul></p><p><b>AUXOUTS/3/OUTPUTSELECT</b></p></body></html>
cmd_def_1 = -1
combo_def_1 = manual
cmd_def_2 = 0
combo_def_2 = demod_x
cmd_def_3 = 1
combo_def_3 = demod_y
cmd_def_4 = 2
combo_def_4 = demod_r
cmd_def_5 = 3
combo_def_5 = demod_theta
cmd_def_6 = 5
combo_def_6 = pid
cmd_def_7 = 9
combo_def_7 = pid_shift
cmd_def_8 = 10
combo_def_8 = pid_error
cmd_def_9 = 11
combo_def_9 = tu_filtered
cmd_def_10 = 13
combo_def_10 = tu_output
set_cmd = AUXOUTS/3/OUTPUTSELECT
get_cmd = AUXOUTS/3/OUTPUTSELECT

[Auxouts - 3 - Preoffset]
section = Aux
group = Auxouts
label = Auxouts - 3 - Preoffset
datatype = DOUBLE
tooltip = <html><body><p>Add a pre-offset to the signal before scaling is applied. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/3/PREOFFSET</b></p></body></html>
set_cmd = AUXOUTS/3/PREOFFSET
get_cmd = AUXOUTS/3/PREOFFSET

[Auxouts - 3 - Scale]
section = Aux
group = Auxouts
label = Auxouts - 3 - Scale
datatype = DOUBLE
tooltip = <html><body><p>Multiplication factor to scale the signal. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/3/SCALE</b></p></body></html>
set_cmd = AUXOUTS/3/SCALE
get_cmd = AUXOUTS/3/SCALE

[Auxouts - 3 - Value]
section = Aux
group = Auxouts
label = Auxouts - 3 - Value
datatype = DOUBLE
unit = V
tooltip = <html><body><p>Voltage present on the Auxiliary Output. Auxiliary Output Value = (Signal+Preoffset)*Scale + Offset</p><p><b>AUXOUTS/3/VALUE</b></p></body></html>
get_cmd = AUXOUTS/3/VALUE

[Demods - 0 - Adcselect]
section = Demods
group = Demods
label = Demods - 0 - Adcselect
datatype = COMBO
tooltip = <html><body><p>Selects the input signal for the demodulator.</p><p><ul><li>sigin0: Sig In 1</li><li>currin0: Curr In 1</li><li>trigin0: Trigger Input 1</li><li>trigin1: Trigger Input 2</li><li>auxout0: Aux Out 1</li><li>auxout1: Aux Out 2</li><li>auxout2: Aux Out 3</li><li>auxout3: Aux Out 4</li><li>auxin0: Aux In 1</li><li>auxin1: Aux In 2</li><li>demod_constant_input: Demodulate a constant input. This results in a sine wave of the frequency specified by the demodulator`s oscillator with an amplitude of 1 (at lower frequencies: higher frequencies will be attenuated). The maximum possible frequency is limited by the demodulator sampling rate and bandwidth: use demodulator order 1 for the least attenuation in demodulator output. This signal may be used with the auxiliary outputs, PID and Threshold Unit for advanced measurement and control tasks. When the demodulator output is written to an auxiliary output, the resulting signal can also be used as a second output channel (for low frequencies).</li></ul></p><p><b>DEMODS/0/ADCSELECT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = sigin0
cmd_def_2 = 1
combo_def_2 = currin0
cmd_def_3 = 2
combo_def_3 = trigin0
cmd_def_4 = 3
combo_def_4 = trigin1
cmd_def_5 = 4
combo_def_5 = auxout0
cmd_def_6 = 5
combo_def_6 = auxout1
cmd_def_7 = 6
combo_def_7 = auxout2
cmd_def_8 = 7
combo_def_8 = auxout3
cmd_def_9 = 8
combo_def_9 = auxin0
cmd_def_10 = 9
combo_def_10 = auxin1
cmd_def_11 = 174
combo_def_11 = demod_constant_input
set_cmd = DEMODS/0/ADCSELECT
get_cmd = DEMODS/0/ADCSELECT

[Demods - 0 - Bypass]
section = Demods
group = Demods
label = Demods - 0 - Bypass
datatype = DOUBLE
tooltip = <html><body><p>Allows to bypass the demodulator low-pass filter, thus increasing the bandwidth.</p><p><b>DEMODS/0/BYPASS</b></p></body></html>
set_cmd = DEMODS/0/BYPASS
get_cmd = DEMODS/0/BYPASS

[Demods - 0 - Enable]
section = Demods
group = Demods
label = Demods - 0 - Enable
datatype = COMBO
tooltip = <html><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.</p><p><ul><li>off: demodulator inactive</li><li>on: demodulator active</li></ul></p><p><b>DEMODS/0/ENABLE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = on
set_cmd = DEMODS/0/ENABLE
get_cmd = DEMODS/0/ENABLE

[Demods - 0 - Freq]
section = Demods
group = Demods
label = Demods - 0 - Freq
datatype = DOUBLE
unit = Hz
tooltip = <html><body><p>Indicates the frequency used for demodulation and for output generation. The demodulation frequency is calculated with oscillator frequency times the harmonic factor. When the MOD option is used linear combinations of oscillator frequencies including the harmonic factors define the demodulation frequencies.</p><p><b>DEMODS/0/FREQ</b></p></body></html>
get_cmd = DEMODS/0/FREQ

[Demods - 0 - Harmonic]
section = Demods
group = Demods
label = Demods - 0 - Harmonic
datatype = DOUBLE
tooltip = <html><body><p>Multiplies the demodulator`s reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.</p><p><b>DEMODS/0/HARMONIC</b></p></body></html>
set_cmd = DEMODS/0/HARMONIC
get_cmd = DEMODS/0/HARMONIC

[Demods - 0 - Order]
section = Demods
group = Demods
label = Demods - 0 - Order
datatype = COMBO
tooltip = <html><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.</p><p><ul><li>1: 1st order filter 6 dB/oct</li><li>2: 2nd order filter 12 dB/oct</li><li>3: 3rd order filter 18 dB/oct</li><li>4: 4th order filter 24 dB/oct</li><li>5: 5th order filter 30 dB/oct</li><li>6: 6th order filter 36 dB/oct</li><li>7: 7th order filter 42 dB/oct</li><li>8: 8th order filter 48 dB/oct</li></ul></p><p><b>DEMODS/0/ORDER</b></p></body></html>
cmd_def_1 = 1
combo_def_1 = 1
cmd_def_2 = 2
combo_def_2 = 2
cmd_def_3 = 3
combo_def_3 = 3
cmd_def_4 = 4
combo_def_4 = 4
cmd_def_5 = 5
combo_def_5 = 5
cmd_def_6 = 6
combo_def_6 = 6
cmd_def_7 = 7
combo_def_7 = 7
cmd_def_8 = 8
combo_def_8 = 8
set_cmd = DEMODS/0/ORDER
get_cmd = DEMODS/0/ORDER

[Demods - 0 - Oscselect]
section = Demods
group = Demods
label = Demods - 0 - Oscselect
datatype = COMBO
tooltip = <html><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.</p><p><ul><li>0: Oscillator 1</li><li>1: Oscillator 2</li><li>2: Oscillator 3</li><li>3: Oscillator 4</li></ul></p><p><b>DEMODS/0/OSCSELECT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = 0
cmd_def_2 = 1
combo_def_2 = 1
cmd_def_3 = 2
combo_def_3 = 2
cmd_def_4 = 3
combo_def_4 = 3
set_cmd = DEMODS/0/OSCSELECT
get_cmd = DEMODS/0/OSCSELECT

[Demods - 0 - Phaseadjust]
section = Demods
group = Demods
label = Demods - 0 - Phaseadjust
datatype = DOUBLE
tooltip = <html><body><p>Adjust the demodulator phase automatically in order to read 0 degrees.</p><p><b>DEMODS/0/PHASEADJUST</b></p></body></html>
set_cmd = DEMODS/0/PHASEADJUST
get_cmd = DEMODS/0/PHASEADJUST

[Demods - 0 - Phaseshift]
section = Demods
group = Demods
label = Demods - 0 - Phaseshift
datatype = DOUBLE
unit = deg
tooltip = <html><body><p>Phase shift applied to the reference input of the demodulator.</p><p><b>DEMODS/0/PHASESHIFT</b></p></body></html>
set_cmd = DEMODS/0/PHASESHIFT
get_cmd = DEMODS/0/PHASESHIFT

[Demods - 0 - Rate]
section = Demods
group = Demods
label = Demods - 0 - Rate
datatype = DOUBLE
unit = 1 - s
tooltip = <html><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.</p><p><b>DEMODS/0/RATE</b></p></body></html>
set_cmd = DEMODS/0/RATE
get_cmd = DEMODS/0/RATE

[Demods - 0 - Sample]
section = Demods
group = Demods
label = Demods - 0 - Sample
datatype = COMPLEX
tooltip = <html><body><p>Contains streamed demodulator samples with sample interval defined by the demodulator data rate.</p><p><b>DEMODS/0/SAMPLE</b></p></body></html>
get_cmd = DEMODS/0/SAMPLE

[Demods - 0 - Sinc]
section = Demods
group = Demods
label = Demods - 0 - Sinc
datatype = DOUBLE
tooltip = <html><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.</p><p><b>DEMODS/0/SINC</b></p></body></html>
set_cmd = DEMODS/0/SINC
get_cmd = DEMODS/0/SINC

[Demods - 0 - Timeconstant]
section = Demods
group = Demods
label = Demods - 0 - Timeconstant
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.</p><p><b>DEMODS/0/TIMECONSTANT</b></p></body></html>
set_cmd = DEMODS/0/TIMECONSTANT
get_cmd = DEMODS/0/TIMECONSTANT

[Demods - 0 - Trigger]
section = Demods
group = Demods
label = Demods - 0 - Trigger
datatype = COMBO
tooltip = <html><body><p>Selects the acquisition mode (i.e. triggering) or the demodulator.</p><p><ul><li>continuous: demodulator data is continuously streamed to the host computer.</li><li>trigin0_rising: rising edge triggered.</li><li>trigin0_falling: falling edge triggered.</li><li>trigin0_both: triggering on both rising and falling edge.</li><li>trigin1_rising: rising edge triggered.</li><li>trigin0or1_rising: rising edge triggered on either input.</li><li>trigin1_falling: falling edge triggered.</li><li>trigin0or1_falling: falling edge triggered on either input.</li><li>trigin1_both: triggering on both rising and falling edge.</li><li>trigin0or1_both: triggering on both rising and falling edge or either trigger input.</li><li>trigin0_low: demodulator data is streamed to the host computer when the level is low (TTL).</li><li>trigin0_high: demodulator data is streamed to the host computer when the level is high (TTL).</li><li>trigin1_low: demodulator data is streamed to the host computer when the level is low (TTL).</li><li>trigin0or1_low: demodulator data is streamed to the host computer when either level is low (TTL).</li><li>trigin1_high: demodulator data is streamed to the host computer when the level is high (TTL).</li><li>trigin0or1_high: demodulator data is streamed to the host computer when either level is high (TTL).</li></ul></p><p><b>DEMODS/0/TRIGGER</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = continuous
cmd_def_2 = 1
combo_def_2 = trigin0_rising
cmd_def_3 = 2
combo_def_3 = trigin0_falling
cmd_def_4 = 3
combo_def_4 = trigin0_both
cmd_def_5 = 4
combo_def_5 = trigin1_rising
cmd_def_6 = 5
combo_def_6 = trigin0or1_rising
cmd_def_7 = 8
combo_def_7 = trigin1_falling
cmd_def_8 = 10
combo_def_8 = trigin0or1_falling
cmd_def_9 = 12
combo_def_9 = trigin1_both
cmd_def_10 = 15
combo_def_10 = trigin0or1_both
cmd_def_11 = 16
combo_def_11 = trigin0_low
cmd_def_12 = 32
combo_def_12 = trigin0_high
cmd_def_13 = 64
combo_def_13 = trigin1_low
cmd_def_14 = 80
combo_def_14 = trigin0or1_low
cmd_def_15 = 128
combo_def_15 = trigin1_high
cmd_def_16 = 160
combo_def_16 = trigin0or1_high
set_cmd = DEMODS/0/TRIGGER
get_cmd = DEMODS/0/TRIGGER

[Demods - 1 - Adcselect]
section = Demods
group = Demods
label = Demods - 1 - Adcselect
datatype = COMBO
tooltip = <html><body><p>Selects the input signal for the demodulator.</p><p><ul><li>sigin0: Sig In 1</li><li>currin0: Curr In 1</li><li>trigin0: Trigger Input 1</li><li>trigin1: Trigger Input 2</li><li>auxout0: Aux Out 1</li><li>auxout1: Aux Out 2</li><li>auxout2: Aux Out 3</li><li>auxout3: Aux Out 4</li><li>auxin0: Aux In 1</li><li>auxin1: Aux In 2</li><li>demod_constant_input: Demodulate a constant input. This results in a sine wave of the frequency specified by the demodulator`s oscillator with an amplitude of 1 (at lower frequencies: higher frequencies will be attenuated). The maximum possible frequency is limited by the demodulator sampling rate and bandwidth: use demodulator order 1 for the least attenuation in demodulator output. This signal may be used with the auxiliary outputs, PID and Threshold Unit for advanced measurement and control tasks. When the demodulator output is written to an auxiliary output, the resulting signal can also be used as a second output channel (for low frequencies).</li></ul></p><p><b>DEMODS/1/ADCSELECT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = sigin0
cmd_def_2 = 1
combo_def_2 = currin0
cmd_def_3 = 2
combo_def_3 = trigin0
cmd_def_4 = 3
combo_def_4 = trigin1
cmd_def_5 = 4
combo_def_5 = auxout0
cmd_def_6 = 5
combo_def_6 = auxout1
cmd_def_7 = 6
combo_def_7 = auxout2
cmd_def_8 = 7
combo_def_8 = auxout3
cmd_def_9 = 8
combo_def_9 = auxin0
cmd_def_10 = 9
combo_def_10 = auxin1
cmd_def_11 = 174
combo_def_11 = demod_constant_input
set_cmd = DEMODS/1/ADCSELECT
get_cmd = DEMODS/1/ADCSELECT

[Demods - 1 - Bypass]
section = Demods
group = Demods
label = Demods - 1 - Bypass
datatype = DOUBLE
tooltip = <html><body><p>Allows to bypass the demodulator low-pass filter, thus increasing the bandwidth.</p><p><b>DEMODS/1/BYPASS</b></p></body></html>
set_cmd = DEMODS/1/BYPASS
get_cmd = DEMODS/1/BYPASS

[Demods - 1 - Enable]
section = Demods
group = Demods
label = Demods - 1 - Enable
datatype = COMBO
tooltip = <html><body><p>Enables the data acquisition for the corresponding demodulator. Note: increasing number of active demodulators increases load on the physical connection to the host computer.</p><p><ul><li>off: demodulator inactive</li><li>on: demodulator active</li></ul></p><p><b>DEMODS/1/ENABLE</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = off
cmd_def_2 = 1
combo_def_2 = on
set_cmd = DEMODS/1/ENABLE
get_cmd = DEMODS/1/ENABLE

[Demods - 1 - Freq]
section = Demods
group = Demods
label = Demods - 1 - Freq
datatype = DOUBLE
unit = Hz
tooltip = <html><body><p>Indicates the frequency used for demodulation and for output generation. The demodulation frequency is calculated with oscillator frequency times the harmonic factor. When the MOD option is used linear combinations of oscillator frequencies including the harmonic factors define the demodulation frequencies.</p><p><b>DEMODS/1/FREQ</b></p></body></html>
get_cmd = DEMODS/1/FREQ

[Demods - 1 - Harmonic]
section = Demods
group = Demods
label = Demods - 1 - Harmonic
datatype = DOUBLE
tooltip = <html><body><p>Multiplies the demodulator`s reference frequency by an integer factor. If the demodulator is used as a phase detector in external reference mode (PLL), the effect is that the internal oscillator locks to the external frequency divided by the integer factor.</p><p><b>DEMODS/1/HARMONIC</b></p></body></html>
set_cmd = DEMODS/1/HARMONIC
get_cmd = DEMODS/1/HARMONIC

[Demods - 1 - Order]
section = Demods
group = Demods
label = Demods - 1 - Order
datatype = COMBO
tooltip = <html><body><p>Selects the filter roll off between 6 dB/oct and 48 dB/oct.</p><p><ul><li>1: 1st order filter 6 dB/oct</li><li>2: 2nd order filter 12 dB/oct</li><li>3: 3rd order filter 18 dB/oct</li><li>4: 4th order filter 24 dB/oct</li><li>5: 5th order filter 30 dB/oct</li><li>6: 6th order filter 36 dB/oct</li><li>7: 7th order filter 42 dB/oct</li><li>8: 8th order filter 48 dB/oct</li></ul></p><p><b>DEMODS/1/ORDER</b></p></body></html>
cmd_def_1 = 1
combo_def_1 = 1
cmd_def_2 = 2
combo_def_2 = 2
cmd_def_3 = 3
combo_def_3 = 3
cmd_def_4 = 4
combo_def_4 = 4
cmd_def_5 = 5
combo_def_5 = 5
cmd_def_6 = 6
combo_def_6 = 6
cmd_def_7 = 7
combo_def_7 = 7
cmd_def_8 = 8
combo_def_8 = 8
set_cmd = DEMODS/1/ORDER
get_cmd = DEMODS/1/ORDER

[Demods - 1 - Oscselect]
section = Demods
group = Demods
label = Demods - 1 - Oscselect
datatype = COMBO
tooltip = <html><body><p>Connects the demodulator with the supplied oscillator. Number of available oscillators depends on the installed options.</p><p><ul><li>0: Oscillator 1</li><li>1: Oscillator 2</li><li>2: Oscillator 3</li><li>3: Oscillator 4</li></ul></p><p><b>DEMODS/1/OSCSELECT</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = 0
cmd_def_2 = 1
combo_def_2 = 1
cmd_def_3 = 2
combo_def_3 = 2
cmd_def_4 = 3
combo_def_4 = 3
set_cmd = DEMODS/1/OSCSELECT
get_cmd = DEMODS/1/OSCSELECT

[Demods - 1 - Phaseadjust]
section = Demods
group = Demods
label = Demods - 1 - Phaseadjust
datatype = DOUBLE
tooltip = <html><body><p>Adjust the demodulator phase automatically in order to read 0 degrees.</p><p><b>DEMODS/1/PHASEADJUST</b></p></body></html>
set_cmd = DEMODS/1/PHASEADJUST
get_cmd = DEMODS/1/PHASEADJUST

[Demods - 1 - Phaseshift]
section = Demods
group = Demods
label = Demods - 1 - Phaseshift
datatype = DOUBLE
unit = deg
tooltip = <html><body><p>Phase shift applied to the reference input of the demodulator.</p><p><b>DEMODS/1/PHASESHIFT</b></p></body></html>
set_cmd = DEMODS/1/PHASESHIFT
get_cmd = DEMODS/1/PHASESHIFT

[Demods - 1 - Rate]
section = Demods
group = Demods
label = Demods - 1 - Rate
datatype = DOUBLE
unit = 1 - s
tooltip = <html><body><p>Defines the demodulator sampling rate, the number of samples that are sent to the host computer per second. A rate of about 7-10 higher as compared to the filter bandwidth usually provides sufficient aliasing suppression. This is also the rate of data received by LabOne Data Server and saved to the computer hard disk. This setting has no impact on the sample rate on the auxiliary outputs connectors. Note: the value inserted by the user may be approximated to the nearest value supported by the instrument.</p><p><b>DEMODS/1/RATE</b></p></body></html>
set_cmd = DEMODS/1/RATE
get_cmd = DEMODS/1/RATE

[Demods - 1 - Sample]
section = Demods
group = Demods
label = Demods - 1 - Sample
datatype = COMPLEX
tooltip = <html><body><p>Contains streamed demodulator samples with sample interval defined by the demodulator data rate.</p><p><b>DEMODS/1/SAMPLE</b></p></body></html>
get_cmd = DEMODS/1/SAMPLE

[Demods - 1 - Sinc]
section = Demods
group = Demods
label = Demods - 1 - Sinc
datatype = DOUBLE
tooltip = <html><body><p>Enables the sinc filter. When the filter bandwidth is comparable to or larger than the demodulation frequency, the demodulator output may contain frequency components at the frequency of demodulation and its higher harmonics. The sinc is an additional filter that attenuates these unwanted components in the demodulator output.</p><p><b>DEMODS/1/SINC</b></p></body></html>
set_cmd = DEMODS/1/SINC
get_cmd = DEMODS/1/SINC

[Demods - 1 - Timeconstant]
section = Demods
group = Demods
label = Demods - 1 - Timeconstant
datatype = DOUBLE
unit = s
tooltip = <html><body><p>Sets the integration time constant or in other words, the cutoff frequency of the demodulator low pass filter.</p><p><b>DEMODS/1/TIMECONSTANT</b></p></body></html>
set_cmd = DEMODS/1/TIMECONSTANT
get_cmd = DEMODS/1/TIMECONSTANT

[Demods - 1 - Trigger]
section = Demods
group = Demods
label = Demods - 1 - Trigger
datatype = COMBO
tooltip = <html><body><p>Selects the acquisition mode (i.e. triggering) or the demodulator.</p><p><ul><li>continuous: demodulator data is continuously streamed to the host computer.</li><li>trigin0_rising: rising edge triggered.</li><li>trigin0_falling: falling edge triggered.</li><li>trigin0_both: triggering on both rising and falling edge.</li><li>trigin1_rising: rising edge triggered.</li><li>trigin0or1_rising: rising edge triggered on either input.</li><li>trigin1_falling: falling edge triggered.</li><li>trigin0or1_falling: falling edge triggered on either input.</li><li>trigin1_both: triggering on both rising and falling edge.</li><li>trigin0or1_both: triggering on both rising and falling edge or either trigger input.</li><li>trigin0_low: demodulator data is streamed to the host computer when the level is low (TTL).</li><li>trigin0_high: demodulator data is streamed to the host computer when the level is high (TTL).</li><li>trigin1_low: demodulator data is streamed to the host computer when the level is low (TTL).</li><li>trigin0or1_low: demodulator data is streamed to the host computer when either level is low (TTL).</li><li>trigin1_high: demodulator data is streamed to the host computer when the level is high (TTL).</li><li>trigin0or1_high: demodulator data is streamed to the host computer when either level is high (TTL).</li></ul></p><p><b>DEMODS/1/TRIGGER</b></p></body></html>
cmd_def_1 = 0
combo_def_1 = continuous
cmd_def_2 = 1
combo_def_2 = trigin0_rising
cmd_def_3 = 2
combo_def_3 = trigin0_falling
cmd_def_4 = 3
combo_def_4 = trigin0_both
cmd_def_5 = 4
combo_def_5 = trigin1_rising
cmd_def_6 = 5
combo_def_6 = trigin0or1_rising
cmd_def_7 = 8
combo_def_7 = trigin1_falling
cmd_def_8 = 10
combo_def_8 = trigin0or1_falling
cmd_def_9 = 12
combo_def_9 = trigin1_both
cmd_def_10 = 15
combo_def_10 = trigin0or1_both
cmd_def_11 = 16
combo_def_11 = trigin0_low
cmd_def_12 = 32
combo_def_12 = trigin0_high
cmd_def_13 = 64
combo_def_13 = trigin1_low
cmd_def_14 = 80
combo_def_14 = trigin0or1_low
cmd_def_15 = 128
combo_def_15 = trigin1_high
cmd_def_16 = 160
combo_def_16 = trigin0or1_high
set_cmd = DEMODS/1/TRIGGER
get_cmd = DEMODS/1/TRIGGER

[General settings]
name = Zurich Instruments MFLI
version = 22.02#0.3.0#0.1
driver_path = Zurich_Instruments_MFLI
support_arm = True
support_hardware_loop = True
interface = Other
startup = Do nothing

